PsychoPy2experiment version="1.81.03"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Experiment info = {'participant':'', 'gender (m/f)':'', 'age':'', 'session':03}
  expName = LearningTask
  logging level = warning
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine instrMain
    TextComponent instr2
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        OK, ready to start the main experiment?

        Remember, press;
         - 'S' if the SMALL letters are S
         - 'H' if the SMALL letters are H

        Try to respond as quickly and as accurately as possible.

        When you are ready to proceed press any key.
    KeyboardComponent ok2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 2
      forceEndRoutine = True
      allowedKeys = 't', 'y', 'g', 'h'
      startVal [time (s)] = .5
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    TextComponent text
      text = +
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 1
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    ImageComponent image_2
      stopVal [duration (s)] = 1.0
      pos [set every repeat] = $[xPos, yPos]
      units = pix
      startVal [time (s)] = .5
      image [set every repeat] = $ShapeStimulus
      size = [101, 101]
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  Routine StimSetup
  Routine instrPractice
    TextComponent instruct1
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        A shape stimulus will appear on every trial.

        If it appears in the upper right quadrant, PRESS Y

        If it appears in the lower right quadrant, PRESS H

        If it appears in the lower left quadrant, PRESS G

        If it appears in the upper left quadrant, PRESS T

        Press any key when you are ready to proceed.
    KeyboardComponent ok1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
    CodeComponent message
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(resp.rt)
        else:
          msg="Oops! That was wrong"
    TextComponent feedback_2
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  LoopInitiator ColorLoop loopType="TrialHandler"
    conditionsFile = Color.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'Color': u'yellow'},
      {u'Color': u'white'},
      {u'Color': u'orange'},
      {u'Color': u'magenta'},
      {u'Color': u'green'},
      {u'Color': u'gray'},
      {u'Color': u'cyan'},
      {u'Color': u'blue'}]
    Routine StimSetup
  LoopTerminator ColorLoop
  LoopInitiator ShapeLoop loopType="TrialHandler"
    conditionsFile = Shape.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'Shape': u'triangle'},
      {u'Shape': u'square'},
      {u'Shape': u'line'},
      {u'Shape': u'invertedTriangle'},
      {u'Shape': u'hexagon'},
      {u'Shape': u'diamond'},
      {u'Shape': u'cross'},
      {u'Shape': u'circle'}]
    Routine StimSetup
  LoopTerminator ShapeLoop
  LoopInitiator RewardAmountLoop loopType="TrialHandler"
    conditionsFile = StopOrGoAndAmount.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'StopOrGo': u'Stop', u'Amount': 0.5},
      {u'StopOrGo': u'Go', u'Amount': 0.5},
      {u'StopOrGo': u'Stop', u'Amount': 1},
      {u'StopOrGo': u'Go', u'Amount': 1},
      {u'StopOrGo': u'Stop', u'Amount': 2},
      {u'StopOrGo': u'Go', u'Amount': 2},
      {u'StopOrGo': u'Stop', u'Amount': 4},
      {u'StopOrGo': u'Go', u'Amount': 4}]
    Routine StimSetup
  LoopTerminator RewardAmountLoop
  Routine instrPractice
