PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = DondersAuditory3
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent text
      text = +
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code
      Begin Routine:
        import random

        jitter = random.randrange(50, 100)*.01
    KeyboardComponent key_resp_2
      correctAns = 'space'
      storeCorrect = True
      stopVal [duration (s)] = 2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = first key
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    SoundComponent sound_1
      sound = 900
      volume = .2
      stopVal [duration (s)] = .2
      startEstim = .5
      startVal [time (s)] = $jitter
  Routine ITI
    TextComponent text_3
      text = ITI
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_2
      Begin Routine:
        trials.addData("jitterTime", jitter)
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine trial
    Routine ITI
  LoopTerminator trials
