PsychoPy2experiment version="1.82.01"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  color = black
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Experiment info = {u'session': u'', u'participant': u''}
  expName = LearningTask
  logging level = warning
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine blankStop
    TextComponent text_4
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_9
      correctAns = $corrGoResp
      storeCorrect = True
      stopVal [duration (s)] = 1.5
      forceEndRoutine = False
      allowedKeys = 'z','m'
      startVal [time (s)] = 0.0
      store = first key
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  Routine End
    TextComponent text_6
      text = This is the end, beautiful friend
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine feedback
    CodeComponent message
      Begin Experiment:
        #***************************

        #message variable just needs some value at start
        message=0

        #***************************
      Begin Routine:
        #***************************

        import random

        displayReward = random.randrange(1, 6)

        if resp.corr:#stored on last run routine
            if displayReward == 1:
                computedReward = 0 # On 20% of all trials I want to give a 0 reward
            else:
                computedReward = round(currentReward + (random.randrange(-25, 26)*.01), 2)
            message = "You won $ %.2f" %computedReward
        elif resp.keys is None:
            message ="Too Slow"
            computedReward = 0
        else:
            message="Wrong"
            computedReward = 0

        #***************************
    TextComponent feedback_2
      text [set every repeat] = $message
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = .2
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    ImageComponent image
      stopVal [duration (s)] = 1.0
      pos [set every repeat] = $[xPos, yPos]
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $currentStimulus
      size = [151, 151]
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    KeyboardComponent feedbackResp
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 1.0
      forceEndRoutine = False
      allowedKeys = 'q', 'w', 's', 'a'
      startVal [time (s)] = 0.0
      store = first key
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  Routine auctionITI
    TextComponent text_3
      stopVal [duration (s)] = $ITIDur
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_19
      Begin Routine:
        if auctionResponse.keys == 'r':
            chosenAuctionAmount = currentAuctionAmount[0]
        elif auctionResponse.keys == 't':
            chosenAuctionAmount = currentAuctionAmount[1]
        elif auctionResponse.keys == 'y':
            chosenAuctionAmount = currentAuctionAmount[2]
        elif auctionResponse.keys == 'u':
            chosenAuctionAmount = currentAuctionAmount[3]
        elif auctionResponse.keys == 'i':
            chosenAuctionAmount = currentAuctionAmount[4]
        elif auctionResponse.keys == 'o':
            chosenAuctionAmount = currentAuctionAmount[5]
      End Routine:
        auctionTrials.addData("EndTrialTimeStamp", core.getTime())
        auctionTrials.addData("auctionStim", currentAuctionStim)
        auctionTrials.addData("auctionAmounts", currentAuctionAmount)
        auctionTrials.addData("auctionStimValue", currentAuctionStimValue)
        auctionTrials.addData("auctionCondition", currentAuctionCondition)
        auctionTrials.addData("chosenAuctionAmount", chosenAuctionAmount)
  Routine auctionTrial
    TextComponent Fix
      text = +
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0.0
      letterHeight = 1
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    TextComponent R
      text = R
      stopVal [duration (s)] = 5
      pos = [-.75, -.7]
      units = norm
      startVal [time (s)] = 1.0
      letterHeight = .2
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    ImageComponent auctionStim
      stopVal [duration (s)] = 5.5
      units = pix
      startVal [time (s)] = .5
      image [set every repeat] = $currentAuctionStim
      size = [151, 151]
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    TextComponent T
      text = T
      stopVal [duration (s)] = 5.0
      pos = [-.45, -.7]
      units = norm
      startVal [time (s)] = 1.0
      letterHeight = 0.2
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    TextComponent Y
      text = Y
      stopVal [duration (s)] = 5.0
      pos = [-.15, -.7]
      units = norm
      startVal [time (s)] = 1.0
      letterHeight = 0.2
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    TextComponent U
      text = U
      stopVal [duration (s)] = 5.0
      pos = [.15, -.7]
      units = norm
      startVal [time (s)] = 1.0
      letterHeight = 0.2
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    TextComponent I
      text = I
      stopVal [duration (s)] = 5.0
      pos = [.45, -.7]
      units = norm
      startVal [time (s)] = 1.0
      letterHeight = 0.2
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    TextComponent O
      text = O
      stopVal [duration (s)] = 5.0
      pos = [.75, -.7]
      units = norm
      startVal [time (s)] = 1.0
      letterHeight = 0.2
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    TextComponent RAmount
      text [set every repeat] = $currentAuctionAmount[0]
      stopVal [duration (s)] = 5.0
      pos = [-.75, -.4]
      units = norm
      startVal [time (s)] = 1.0
      letterHeight = 0.2
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    TextComponent TAmount
      text [set every repeat] = $currentAuctionAmount[1]
      stopVal [duration (s)] = 5.0
      pos = [-.45, -.4]
      units = norm
      startVal [time (s)] = 1.0
      letterHeight = 0.2
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    TextComponent YAmount
      text [set every repeat] = $currentAuctionAmount[2]
      stopVal [duration (s)] = 5.0
      pos = [-.15, -.4]
      units = norm
      startVal [time (s)] = 1.0
      letterHeight = 0.2
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    TextComponent UAmount
      text [set every repeat] = $currentAuctionAmount[3]
      stopVal [duration (s)] = 5.0
      pos = [.15, -.4]
      units = norm
      startVal [time (s)] = 1.0
      letterHeight = 0.2
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    TextComponent IAmount
      text [set every repeat] = $currentAuctionAmount[4]
      stopVal [duration (s)] = 5.0
      pos = [.45, -.4]
      units = norm
      startVal [time (s)] = 1.0
      letterHeight = 0.2
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    TextComponent OAmount
      text [set every repeat] = $currentAuctionAmount[5]
      stopVal [duration (s)] = 5.0
      pos = [.75, -.4]
      units = norm
      startVal [time (s)] = 1.0
      letterHeight = 0.2
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    KeyboardComponent auctionResponse
      stopVal [duration (s)] = 5
      forceEndRoutine = True
      allowedKeys = 'r', 't', 'y', 'u', 'i', 'o'
      startVal [time (s)] = 1.0
      store = first key
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    CodeComponent code_18
      Begin Routine:
        startTime = trialClock.getTime()
      End Routine:
        endTime = trialClock.getTime()
        auctionStimDuration = endTime - startTime
        ITIDur = 6 - auctionStimDuration

        auctionTrials.addData("auctionStimDuration", auctionStimDuration)
  Routine pracStopCleanUp
    CodeComponent code_13
      Begin Routine:
        #***************************

        if currentStopPracTrial['stopOrGo'] == 'go':
            goTrialCount = goTrialCount + 1

        if goResp.corr and currentStopPracTrial['stopOrGo'] == 'go':
            goCumRT = goCumRT + goResp.rt
            goRTCount = goRTCount + 1

        if currentStopPracTrial['stopOrGo'] == 'stop':
            stopTrialCount = stopTrialCount + 1

        if currentStopPracTrial['stopOrGo'] == 'stop' and goResp.keys is None and key_resp_9.keys is None:
            stopSuccessCount = stopSuccessCount + 1

        if currentStopPracTrial['stopOrGo'] == 'go':
            if goResp.keys is None:
                omissionCount = omissionCount + 1
            elif goResp.corr == 0:
                commissionCount = commissionCount + 1

        #Outputting a bunch of variables
        pracStopTrials.addData("fixStopOnset", fixStop.tStart)
        pracStopTrials.addData("goStimOnset", goStim.tStart)
        if SSD  != -1:
            pracStopTrials.addData("stopSignalOnset", stopSignal.tStart)

        #***************************
      End Routine:
        pracStopTrials.addData("EndTrialTimeStamp", core.getTime())
  Routine NewPracStim
    CodeComponent code_11
      Begin Routine:
        #***************************

        SameStimPresentationCount = 0

        currentLearningPracTrial = learningPracTrialList.pop(0)
        currentStimulus = currentLearningPracTrial['fileName']
        currentReward = currentLearningPracTrial['reward']
        currentStimType = currentLearningPracTrial['condition']

        #***************************
  Routine endTrialMain
    CodeComponent code_17
      End Routine:
        #***************************

        if resp.corr:
            ReDoLoopMain.finished = True
            rewardList.append(deepcopy(computedReward))

        trials.addData("currentReward", currentReward)
        trials.addData("currentStimulus", currentStimulus)
        trials.addData("currentStimType", currentStimType)

        if SameStimPresentationCount == 1:
            trials.addData("firstComputedRewardOutput", computedReward)
            trials.addData("firstLearningStimOnset", learningStim.tStart)
            trials.addData("firstLearningFixOnset", learningFix.tStart)
            trials.addData("firstPresentationRT", resp.rt)
            trials.addData("firstPresentationAcc", resp.corr)
            trials.addData("firstPresentationResp", resp.keys)
            trials.addData("firstEndTrialTimeStamp", core.getTime())
        elif SameStimPresentationCount == 2:
            trials.addData("secondComputedRewardOutput", computedReward)
            trials.addData("secondLearningStimOnset", learningStim.tStart)
            trials.addData("secondLearningFixOnset", learningFix.tStart)
            trials.addData("secondPresentationRT", resp.rt)
            trials.addData("secondPresentationAcc", resp.corr)
            trials.addData("secondPresentationResp", resp.keys)
            trials.addData("secondEndTrialTimeStamp", core.getTime())
        elif SameStimPresentationCount == 3:
            trials.addData("thirdComputedRewardOutput", computedReward)
            trials.addData("thirdLearningStimOnset", learningStim.tStart)
            trials.addData("thirdLearningFixOnset", learningFix.tStart)
            trials.addData("thirdPresentationRT", resp.rt)
            trials.addData("thirdPresentationAcc", resp.corr)
            trials.addData("thirdPresentationResp", resp.keys)
            trials.addData("thirdEndTrialTimeStamp", core.getTime())
        elif SameStimPresentationCount == 4:
            trials.addData("fourthComputedRewardOutput", computedReward)
            trials.addData("fourthLearningStimOnset", learningStim.tStart)
            trials.addData("fourthLearningFixOnset", learningFix.tStart)
            trials.addData("fourthPresentationRT", resp.rt)
            trials.addData("fourthPresentationAcc", resp.corr)
            trials.addData("fourthPresentationResp", resp.keys)
            trials.addData("fourthEndTrialTimeStamp", core.getTime())
        elif SameStimPresentationCount == 5:
            trials.addData("fifthComputedRewardOutput", computedReward)
            trials.addData("fifthLearningStimOnset", learningStim.tStart)
            trials.addData("fifthLearningFixOnset", learningFix.tStart)
            trials.addData("fifthPresentationRT", resp.rt)
            trials.addData("fifthPresentationAcc", resp.corr)
            trials.addData("fifthPresentationResp", resp.keys)
            trials.addData("fifthEndTrialTimeStamp", core.getTime())

        #***************************
  Routine GetReadyForMainLearning
  Routine SSDChange
    CodeComponent code_2
      Begin Routine:
        #***************************

        #Adjusting SSD within a range of 0-750ms
        if currentStopTrial['stopOrGo'] == 'stop':
            if goResp.keys is None:
                if SSD <= .75:
                    if xPosGoStim == -200:
                        SSDLeft = deepcopy(SSDLeft)  + .05
                        SSD = SSDLeft
                    if xPosGoStim == 200:
                        SSDRight = deepcopy(SSDRight) + .05
                        SSD = SSDRight
            else:
                if SSD > 0:
                    if xPosGoStim == -200:
                        SSDLeft = deepcopy(SSDLeft) - .05
                        SSD = SSDLeft
                    if xPosGoStim == 200:
                        SSDRight = deepcopy(SSDRight) - .05
                        SSD = SSDRight

        if currentStopTrial['stopOrGo'] == 'go':
            goTrialCount = goTrialCount + 1

        if goResp.corr and currentStopTrial['stopOrGo'] == 'go':
            goCumRT = goCumRT + goResp.rt
            goRTCount = goRTCount + 1

        if currentStopTrial['stopOrGo'] == 'stop':
            stopTrialCount = stopTrialCount + 1

        if currentStopTrial['stopOrGo'] == 'stop' and goResp.keys is None and key_resp_9.keys is None:
            stopSuccessCount = stopSuccessCount + 1

        if currentStopTrial['stopOrGo'] == 'go':
            if goResp.keys is None:
                omissionCount = omissionCount + 1
            elif goResp.corr == 0:
                commissionCount = commissionCount + 1

        StopTrials.addData("fixStopOnset", fixStop.tStart)
        StopTrials.addData("goStimOnset", goStim.tStart)
        if SSD  != -1:
            StopTrials.addData("stopSignalOnset", stopSignal.tStart)

        #***************************
      End Routine:
        #***************************

        StopTrials.addData("EndingSSD", SSD)
        StopTrials.addData("EndTrialTimeStamp", core.getTime())

        #***************************
  Routine ResetAtBlock
    CodeComponent code_3
      Begin Routine:
        #***************************

        Redo = 1

        #***************************
  Routine endTrial
    CodeComponent code_16
      End Routine:
        #***************************

        if resp.corr:
            ReDoLoopPrac.finished = True

        pracTrials.addData("currentReward", currentReward)
        pracTrials.addData("currentStimulus", currentStimulus)
        pracTrials.addData("currentStimType", currentStimType)

        if SameStimPresentationCount == 1:
            pracTrials.addData("firstPracComputedRewardOutput", computedReward)
            pracTrials.addData("firstPracLearningStimOnset", learningStim.tStart)
            pracTrials.addData("firstPracLearningFixOnset", learningFix.tStart)
            pracTrials.addData("firstPracPresentationRT", resp.rt)
            pracTrials.addData("firstPracPresentationAcc", resp.corr)
            pracTrials.addData("firstPracPresentationResp", resp.keys)
            pracTrials.addData("firstPracEndTrialTimeStamp", core.getTime())
        elif SameStimPresentationCount == 2:
            pracTrials.addData("secondPracComputedRewardOutput", computedReward)
            pracTrials.addData("secondPracLearningStimOnset", learningStim.tStart)
            pracTrials.addData("secondPracLearningFixOnset", learningFix.tStart)
            pracTrials.addData("secondPracPresentationRT", resp.rt)
            pracTrials.addData("secondPracPresentationAcc", resp.corr)
            pracTrials.addData("secondPracPresentationResp", resp.keys)
            pracTrials.addData("secondPracEndTrialTimeStamp", core.getTime())
        elif SameStimPresentationCount == 3:
            pracTrials.addData("thirdPracComputedRewardOutput", computedReward)
            pracTrials.addData("thirdPracLearningStimOnset", learningStim.tStart)
            pracTrials.addData("thirdPracLearningFixOnset", learningFix.tStart)
            pracTrials.addData("thirdPracPresentationRT", resp.rt)
            pracTrials.addData("thirdPracPresentationAcc", resp.corr)
            pracTrials.addData("thirdPracPresentationResp", resp.keys)
            pracTrials.addData("thirdPracEndTrialTimeStamp", core.getTime())
        elif SameStimPresentationCount == 4:
            pracTrials.addData("fourthPracComputedRewardOutput", computedReward)
            pracTrials.addData("fourthPracLearningStimOnset", learningStim.tStart)
            pracTrials.addData("fourthPracLearningFixOnset", learningFix.tStart)
            pracTrials.addData("fourthPracPresentationRT", resp.rt)
            pracTrials.addData("fourthPracPresentationAcc", resp.corr)
            pracTrials.addData("fourthPracPresentationResp", resp.keys)
            pracTrials.addData("fourthPracEndTrialTimeStamp", core.getTime())
        elif SameStimPresentationCount == 5:
            pracTrials.addData("fifthPracComputedRewardOutput", computedReward)
            pracTrials.addData("fifthPracLearningStimOnset", learningStim.tStart)
            pracTrials.addData("fifthPracLearningFixOnset", learningFix.tStart)
            pracTrials.addData("fifthPracPresentationRT", resp.rt)
            pracTrials.addData("fifthPracPresentationAcc", resp.corr)
            pracTrials.addData("fifthPracPresentationResp", resp.keys)
            pracTrials.addData("fifthPracEndTrialTimeStamp", core.getTime())

        #***************************
  Routine StimSetup
    CodeComponent code
      Begin Experiment:
        #***************************

        from copy import deepcopy
        import random

        colors = ['yellow', 'white', 'orange', 'magenta', 'green', 'gray', 'cyan', 'blue']
        shapes = ['triangle', 'square', 'line', 'invertedtriangle', 'hexagon', 'diamond', 'cross', 'circle']
        rewards = [0.50, 1.00, 2.00, 4.00] * 2
        conditions = ['go', 'go', 'go', 'go', 'stop', 'stop', 'stop', 'stop']
        trialDetailsList = []
        learningTrialList = []
        learningPracTrialList = []
        auctionTrialList = []
        rewardList = []
        rewardCount = 1
        numStim = 8
        numLearningTrials = 400
        numLearningRepetitions = 50
        numLearningPracTrial = 10
        stopTaskTrials = 288
        numStopPracTrial = 10
        stopTrialsPerStopStim = 27
        goTrialsPerStopStim = 9
        goTrialsPerGoStim = 36
        stopTrialList = []
        stopPracTrialList = []
        auctionTrials = 80
        auctionTrialsPerStim = 10
        auctionAmounts = 5
        eachAuctionAmountCount = 2
        auctionAmountsList = [[34, 68, 102, 136, 170, 204], [39, 78, 117, 156, 195, 234], [44, 88, 132, 176, 220, 264], [49, 98, 147, 196, 245, 294], [54, 108, 162, 216, 270, 324]]

        shuffle(colors)
        shuffle(shapes)

        for i, color in enumerate(colors): # cycle through each color and keep track of an index number
            trialDetails = {} # a dictionary of key-value pairs
            trialDetails['fileName'] = shapes[i] + color + '.gif'
            trialDetails['reward'] = rewards[i]
            trialDetails['condition'] = conditions[i]
            trialDetailsList.append(trialDetails)

        shuffle(trialDetailsList) # do this now to ensure that order of presentation of rewards and conditions is also shuffled

        for k in range(0, numLearningRepetitions):
            for n in range (0, numStim):
                learningTrialList.append(deepcopy(trialDetailsList[n]))

        shuffle(learningTrialList)

        thisExp.addData("learningTrialList", learningTrialList)

        for o in range(0, numLearningPracTrial):
            p = random.randrange(0, numStim)
            learningPracTrialList.append(deepcopy(trialDetailsList[p]))

        shuffle(learningPracTrialList)

        thisExp.addData("learningPracTrialList", learningPracTrialList)

        for q in range(0, numStim):
            if trialDetailsList[q]['condition'] == 'go':
                trialDetailsList[q]['stopOrGo'] =  'go'
                for i in range(0, goTrialsPerGoStim):
                    stopTrialList.append(deepcopy(trialDetailsList[q]))
            elif trialDetailsList[q]['condition'] == 'stop':
                for j in range(0, goTrialsPerStopStim):
                    trialDetailsList[q]['stopOrGo'] = 'go'
                    stopTrialList.append(deepcopy(trialDetailsList[q]))
                for r in range(0, stopTrialsPerStopStim):
                    trialDetailsList[q]['stopOrGo'] = 'stop'
                    stopTrialList.append(deepcopy(trialDetailsList[q]))

        shuffle(stopTrialList)

        thisExp.addData("stopTrialList", stopTrialList)

        for s in range(0, numStopPracTrial):
            s = random.randrange(0, numStim)
            stopPracTrialList.append(deepcopy(trialDetailsList[s]))

        shuffle(stopPracTrialList)

        thisExp.addData("stopPracTrialList", stopPracTrialList)

        for l in range(0, auctionAmounts):
            for t in range(0, numStim):
                for u in range(0, eachAuctionAmountCount):
                    shuffle(auctionAmountsList[l])
                    trialDetailsList[t]['auctionAmount'] = auctionAmountsList[l]
                    auctionTrialList.append(deepcopy(trialDetailsList[t]))

        shuffle(auctionTrialList)

        thisExp.addData("auctionTrialList", auctionTrialList)

        #***************************
  Routine instrPractice
    TextComponent instruct1
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        A shape stimulus will appear on every trial.

        If it appears in the upper right quadrant, PRESS W

        If it appears in the lower right quadrant, PRESS S

        If it appears in the lower left quadrant, PRESS A

        If it appears in the upper left quadrant, PRESS Q

        Responding as fast and as accurately as possible will lead to higher rewards. The computer will randomly pick five of the trials at the end of the experiment and pay out the amount associated with those trials.

        Press the 9 key when you are ready to proceed.
    KeyboardComponent ok1
      forceEndRoutine = True
      allowedKeys = '9'
      startVal [time (s)] = 0.0
      store = first key
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  Routine learningRest
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Please Take a Moment to Rest

        (press the 9 key to continue)
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = '9'
      startVal [time (s)] = 0.0
      store = first key
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  Routine Bank
  Routine ExitPrac_2
  Routine stopBlockSetup
    CodeComponent code_9
      Begin Routine:
        #***************************

        goCumRT = 0
        goRTCount = 0
        omissionCount = 0
        commissionCount = 0
        stopTrialCount = 0
        stopSuccessCount = 0
        goTrialCount = 0

        #***************************
  Routine newPracStopStim
    CodeComponent code_12
      Begin Routine:
        #***************************
        pracStopTrials.addData("StartTrialTimeStamp", core.getTime())

        currentStopPracTrial = stopPracTrialList.pop(0)
        currentGoStim = currentStopPracTrial['fileName']
        currentStopOrGo = currentStopPracTrial['stopOrGo']
        currentStimType = currentStopPracTrial['condition']
        currentStopStimValue = currentStopPracTrial['reward']

        if currentStopOrGo == 'stop':
            SSD = .25
            stopSignal.setVolume(.2)
        elif currentStopOrGo == 'go':
            SSD = -1 #This makes it so the auditory tone does not occur. There's probably a more elegant way to do this. Suggestions?
            stopSignal.setVolume(0)
        #
        pracStopTrials.addData("trialType", currentStopOrGo)
        pracStopTrials.addData("goStim", currentGoStim)
        pracStopTrials.addData("stimType", currentStimType)
        pracStopTrials.addData("stopStimValue", currentStopStimValue)
        SSDInput = SSD + .5 # +.5 because that's the duration of the fixation cross before the go stim appears

        #***************************
  Routine startTrial
    CodeComponent code_20
      Begin Routine:
        SameStimPresentationCount = SameStimPresentationCount + 1
  Routine endOfStopBlockFeedback
    CodeComponent code_10
      Begin Routine:
        #***************************

        if goRTCount > 0:
            goRTFeedback = goCumRT/goRTCount
            goRTFeedback = round(goRTFeedback, 2)
        else:
            goRTFeedback = 'Null'

        if goTrialCount > 0:
            commissionRate = (commissionCount/goTrialCount)*100
            commissionRate = round(commissionRate, 2)
            omissionRate = (omissionCount/goTrialCount)*100
            omissionRate = round(omissionRate, 2)
        else:
            commissionRate = 'Null'
            omissionRate = 'Null'

        if stopTrialCount > 0:
            probabilityOfStop = stopSuccessCount/stopTrialCount
            probabilityOfStop = round(probabilityOfStop, 2)
        else:
            probabilityOfStop = 'Null'

        SSDFeedback = (SSDLeft+SSDRight)/2
        SSDFeedback = round(SSDFeedback, 2)

        stopMessage = " RT = " + str(goRTFeedback) + "\n Omission % = " + str(omissionRate) + "\n Commission % = " + str(commissionRate) + "\n\n\n\n " + str(probabilityOfStop) + "\n " + str(SSDFeedback) + "\n\n (Press the 9 key to continue)"

        #***************************
    TextComponent text_5
      text [set every repeat] = $stopMessage
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys [set every repeat] = '9'
      startVal [time (s)] = 0.0
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  Routine newAuctionStim
    CodeComponent code_14
      Begin Routine:
        #***************************

        auctionTrials.addData("StartTrialTimeStamp", core.getTime())

        currentAuctionTrial = auctionTrialList.pop(0)
        currentAuctionStim = currentAuctionTrial['fileName']
        currentAuctionAmount = currentAuctionTrial['auctionAmount']
        currentAuctionStimValue = currentAuctionTrial['reward']
        currentAuctionCondition = currentAuctionTrial['condition']

        #***************************
  Routine startTrialPrac
    CodeComponent code_21
      Begin Routine:
        SameStimPresentationCount = SameStimPresentationCount + 1
  Routine instrMain
    TextComponent instr2
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        A shape stimulus will appear on every trial.

        If it appears in the upper right quadrant, PRESS Y

        If it appears in the lower right quadrant, PRESS H

        If it appears in the lower left quadrant, PRESS G

        If it appears in the upper left quadrant, PRESS T

        Press any key when you are ready to proceed.
    KeyboardComponent ok2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine StopTrial
    SoundComponent stopSignal
      sound = 900
      volume = .2
      stopVal [duration (s)] = .2
      startEstim = .75
      startVal [time (s)] = $SSDInput
    TextComponent fixStop
      text = |
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 4
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    ImageComponent goStim
      stopVal [duration (s)] = 1.0
      pos [set every repeat] = $[xPosGoStim, yPosGoStim]
      units = pix
      startVal [time (s)] = .5
      image [set every repeat] = $currentGoStim
      size = [151, 151]
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    KeyboardComponent goResp
      correctAns = $corrGoResp
      storeCorrect = True
      stopVal [duration (s)] = 1
      forceEndRoutine = False
      allowedKeys = 'z','m'
      startVal [time (s)] = .5
      store = first key
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  Routine instrStopPrac
    TextComponent instrStopText
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        A shape stimulus will appear on the left or right side of the screen

        If it appears on the left, press Z

        If it appears on the right, press M

        If you hear a tone, do not press anything on that trial

        Responding quickly to the location of the shape and withholding your response when you hear a tone are equally important.

        Press the 9 key when you are ready to proceed.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = '9'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_8
      Begin Routine:
        #***************************

        InitSSD = .25
        SSDLeft = InitSSD
        SSDRight = InitSSD
        goCumRT = 0
        goRTCount = 0
        omissionCount = 0
        commissionCount = 0
        stopTrialCount = 0
        stopSuccessCount = 0
        goTrialCount = 0

        #***************************
  Routine ExitMain
    CodeComponent code_6
      Begin Routine:
        #***************************
  Routine NewStim
    CodeComponent code_4
      Begin Routine:
        #***************************

        SameStimPresentationCount = 0

        currentLearningTrial = learningTrialList.pop(0)
        currentStimulus = currentLearningTrial['fileName']
        currentReward = currentLearningTrial['reward']
        currentStimType = currentLearningTrial['condition']

        #***************************
  Routine ExitPrac
    CodeComponent code_5
  Routine trial
    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 1
      forceEndRoutine = False
      allowedKeys = 'q', 'w', 's', 'a'
      startVal [time (s)] = .5
      store = first key
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    TextComponent learningFix
      text = +
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 1
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    ImageComponent learningStim
      stopVal [duration (s)] = 1.0
      pos [set every repeat] = $[xPos, yPos]
      units = pix
      startVal [time (s)] = .5
      image [set every repeat] = $currentStimulus
      size = [151, 151]
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  Routine Blank
    TextComponent text_2
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0
      letterHeight = 0.1
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  Routine rewardCalc
    CodeComponent code_15
      Begin Routine:
        #***************************

        shuffle(rewardList)

        thisExp.addData("shuffledRewardList", rewardList)

        chosenReward1 = rewardList.pop(0)
        chosenReward2 = rewardList.pop(1)
        chosenReward3 = rewardList.pop(2)
        chosenReward4 = rewardList.pop(3)
        chosenReward5 = rewardList.pop(4)

        totalReward = 12 + chosenReward1 + chosenReward2 + chosenReward3 + chosenReward4 + chosenReward5

        displayedReward = "In total, you earned $ %.2f" %totalReward

        thisExp.addData("chosenReward1", chosenReward1)
        thisExp.addData("chosenReward2", chosenReward2)
        thisExp.addData("chosenReward3", chosenReward3)
        thisExp.addData("chosenReward4", chosenReward4)
        thisExp.addData("chosenReward5", chosenReward5)

        #***************************
    TextComponent text_11
      text [set every repeat] = $displayedReward
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine auctionBreak
    TextComponent text_9
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Please Take a Break

        (press the 9 key to continue)
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = '9'
      startVal [time (s)] = 0.0
      store = first key
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  Routine instrAuction
    TextComponent text_7
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        You will now read instructions on the final phase of the study

        The payoff from this final phase will be paid out at the end of the experiment.

        Press the 9 key to continue
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = '9'
      startVal [time (s)] = 0.0
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  Routine newStopStim
    CodeComponent code_7
      Begin Routine:
        #***************************

        StopTrials.addData("StartTrialTimeStamp", core.getTime())

        currentStopTrial = stopTrialList.pop(0)
        currentGoStim = currentStopTrial['fileName']
        currentStopOrGo = currentStopTrial['stopOrGo']
        currentStimType = currentStopTrial['condition']
        currentStopStimValue = currentStopTrial['reward']

        #Separate SSD tracking algorithms for left and right responses
        if currentStopOrGo == 'stop':
            stopSignal.setVolume(.2)
            if xPosGoStim == -200:
                SSD = deepcopy(SSDLeft)
            else:
                SSD = deepcopy(SSDRight)
        elif currentStopOrGo == 'go':
            SSD = -1
            stopSignal.setVolume(0)

        StopTrials.addData("beginningSSD", SSD)
        StopTrials.addData("trialType", currentStopOrGo)
        StopTrials.addData("goStim", currentGoStim)
        StopTrials.addData("stimType", currentStimType)
        StopTrials.addData("stopStimValue", currentStopStimValue)
        SSDInput = SSD + .5

        #***************************
Flow
  Routine StimSetup
  Routine instrPractice
  LoopInitiator pracTrials loopType="TrialHandler"
    conditionsFile = TrialtypesLearningPrac.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{u'xPos': 200, u'corrAns': u'w', u'yPos': 200},
      {u'xPos': -200, u'corrAns': u'q', u'yPos': 200},
      {u'xPos': 200, u'corrAns': u's', u'yPos': -200},
      {u'xPos': -200, u'corrAns': u'a', u'yPos': -200},
      {u'xPos': 200, u'corrAns': u'w', u'yPos': 200},
      {u'xPos': -200, u'corrAns': u'q', u'yPos': 200},
      {u'xPos': 200, u'corrAns': u's', u'yPos': -200},
      {u'xPos': -200, u'corrAns': u'a', u'yPos': -200},
      {u'xPos': 200, u'corrAns': u'w', u'yPos': 200},
      {u'xPos': -200, u'corrAns': u'q', u'yPos': 200}]
    Routine NewPracStim
    LoopInitiator ReDoLoopPrac loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 5
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      Routine startTrialPrac
      Routine trial
      Routine feedback
      Routine Blank
      Routine endTrial
    LoopTerminator ReDoLoopPrac
  LoopTerminator pracTrials
  Routine instrStopPrac
  LoopInitiator pracStopTrials loopType="TrialHandler"
    conditionsFile = trialtypeStop.xlsx
    loopType = fullRandom
    nReps = 5
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    conditions:
      [{u'corrGoResp': u'z', u'yPosGoStim': 0, u'xPosGoStim': -200},
      {u'corrGoResp': u'm', u'yPosGoStim': 0, u'xPosGoStim': 200}]
    Routine newPracStopStim
    Routine StopTrial
    Routine blankStop
    Routine pracStopCleanUp
  LoopTerminator pracStopTrials
  Routine endOfStopBlockFeedback
  Routine instrPractice
  LoopInitiator Blocks loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = TrialtypesLearning.xlsx
      loopType = fullRandom
      nReps = 25
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      conditions:
        [{u'xPos': 200, u'corrAns': u'h', u'yPos': 200},
        {u'xPos': -200, u'corrAns': u'g', u'yPos': 200},
        {u'xPos': 200, u'corrAns': u'n', u'yPos': -200},
        {u'xPos': -200, u'corrAns': u'b', u'yPos': -200}]
      Routine NewStim
      LoopInitiator ReDoLoopMain loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = 5
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        Routine startTrial
        Routine trial
        Routine feedback
        Routine Blank
        Routine endTrialMain
      LoopTerminator ReDoLoopMain
    LoopTerminator trials
    Routine learningRest
  LoopTerminator Blocks
  Routine instrStopPrac
  LoopInitiator StopBlocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 8
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    Routine stopBlockSetup
    LoopInitiator StopTrials loopType="TrialHandler"
      conditionsFile = trialtypeStop.xlsx
      loopType = fullRandom
      nReps = 18
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      conditions:
        [{u'corrGoResp': u'z', u'yPosGoStim': 0, u'xPosGoStim': -200},
        {u'corrGoResp': u'm', u'yPosGoStim': 0, u'xPosGoStim': 200}]
      Routine newStopStim
      Routine StopTrial
      Routine blankStop
      Routine SSDChange
    LoopTerminator StopTrials
    Routine endOfStopBlockFeedback
  LoopTerminator StopBlocks
  Routine instrAuction
  LoopInitiator auctionBlocks loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 4
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    LoopInitiator auctionTrials loopType="TrialHandler"
      loopType = sequential
      nReps = 20
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      Routine newAuctionStim
      Routine auctionTrial
      Routine auctionITI
    LoopTerminator auctionTrials
    Routine auctionBreak
  LoopTerminator auctionBlocks
  Routine rewardCalc
