PsychoPy2experiment version="1.81.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = NewInlineCode2
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    CodeComponent code
      Begin Experiment:
        # replace these list items with whatever your filename conventions are:
        colors = ['yellow', 'white', 'orange', 'magenta', 'green', 'gray', 'cyan', 'blue']
        shapes = ['triangle', 'square', 'line', 'invertedTriangle', 'hexagon', 'diamond', 'cross', 'circle']
        rewards = [0.5, 1, 2, 4] * 2
        conditions = list['go', 'go', 'go', 'go', 'stop', 'stop', 'stop', 'stop']
        trialDetailsList = []

        shuffle(colors)
        shuffle(shapes)

        for i, color in enumerate(colors): # cycle through each color and keep track of an index number
            trialDetails = {} # a dictionary of key-value pairs
            trialDetails['fileName'] = shapes[i] + color + '.gif'
            trialDetails['reward'] = rewards[i]
            trialDetails['condition'] = conditions[i]
            trialDetailsList.append(trialDetails)

        shuffle(trialDetailsList) # do this now to ensure that order of presentation of rewards and conditions is also shuffled
      Begin Routine:
        #currentDetails = trialDetailsList.pop()

        #currentStimulus = currentDetails['fileName']
        #currentReward = currentDetails['reward']
        #currentCondition = currentDetails['condition']

        # NB need to store these variables in the data manually because we created them manually:
        #thisExp.addData('stimulusFile', currentStimulus)
        #thisExp.addData('reward', currentReward)
        #thisExp.addData('condition', currentCondition)
Flow
  Routine trial
