PsychoPy2experiment version="1.82.01"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Experiment info = {'participant':'', 'gender (m/f)':'', 'age':'', 'session':03}
  expName = LearningTask
  logging level = warning
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine feedback
    CodeComponent message
      Begin Experiment:
        #message variable just needs some value at start
        message=0
      Begin Routine:
        import random

        DisplayReward = random.randrange(1, 6)

        if resp.corr:#stored on last run routine
            if DisplayReward == 1:
                    message = "You won $" + str(0);
            else:
                    CurrentReward = currentLearningTrial['reward']
                    message = "You won $" + str(CurrentReward + (random.randrange(-25, 26)*.01))
        elif resp.keys is None: #or len(key_resp.keys)<1:
        #elif resp.rt == 0:
            message ="Too Slow"
        else:
          message="Wrong"

        #if resp.corr:#stored on last run routine
        #    Redo = 1;
        #else:
        #    Redo = Redo + 1;

        #if DisplayReward == 1:
        #    message = 0;
        #else:
        #    message = CurrentReward + (random.randrange(-25, 26)*.01)

        #  message="Correct! RT=%.3f" %(resp.rt)
    TextComponent feedback_2
      text [set every repeat] = $message
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = .2
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    ImageComponent image
      stopVal [duration (s)] = 1.0
      pos [set every repeat] = $[xPos, yPos]
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $CurrentStimulus
      size = [151, 151]
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  Routine ExitMain
    CodeComponent code_6
      End Routine:
        if resp.corr:
            ReDoLoopMain.finished = True
  Routine NewStim
    CodeComponent code_4
      Begin Routine:
        currentLearningTrial = learningTrialList.pop(0)
        CurrentStimulus = currentLearningTrial['fileName']
  Routine StimSetup
    CodeComponent code
      Begin Experiment:
        from copy import deepcopy
        colors = ['yellow', 'white', 'orange', 'magenta', 'green', 'gray', 'cyan', 'blue']
        shapes = ['triangle', 'square', 'line', 'invertedtriangle', 'hexagon', 'diamond', 'cross', 'circle']
        rewards = [0.50, 1.00, 2.00, 4.00] * 2
        conditions = ['go', 'go', 'go', 'go', 'stop', 'stop', 'stop', 'stop']
        trialDetailsList = []
        learningTrialList = []

        shuffle(colors)
        shuffle(shapes)

        for i, color in enumerate(colors): # cycle through each color and keep track of an index number
            trialDetails = {} # a dictionary of key-value pairs
            trialDetails['fileName'] = shapes[i] + color + '.gif'
            trialDetails['reward'] = rewards[i]
            trialDetails['condition'] = conditions[i]
            trialDetailsList.append(trialDetails)

        shuffle(trialDetailsList) # do this now to ensure that order of presentation of rewards and conditions is also shuffled

        conditionOne = trialDetailsList[0]
        conditionTwo = trialDetailsList[1]
        conditionThree = trialDetailsList[2]
        conditionFour = trialDetailsList[3]
        conditionFive = trialDetailsList[4]
        conditionSix = trialDetailsList[5]
        conditionSeven = trialDetailsList[6]
        conditionEight = trialDetailsList[7]

        numLearningTrials = 400
        numLearningRepetitions = 50
        for k in range(1, numLearningRepetitions + 1):
            learningTrialList.append(conditionOne)
            learningTrialList.append(conditionTwo)
            learningTrialList.append(conditionThree)
            learningTrialList.append(conditionFour)
            learningTrialList.append(conditionFive)
            learningTrialList.append(conditionSix)
            learningTrialList.append(conditionSeven)
            learningTrialList.append(conditionEight)

        shuffle(learningTrialList)

        stopTaskTrials = 272
        stopTrialsPerStopStim = 26
        goTrialsPerStopStim = 8
        goTrialsPerGoStim = 34
        numStim = 8
        stopTrialList = []

        if conditionOne['condition'] == 'go':
            conditionOne['stopOrGo'] = 'go'
            for i in range(1, goTrialsPerGoStim + 1):
                stopTrialList.append(conditionOne)
        else:
            for j in range(1, goTrialsPerStopStim + 1):
                conditionOne['stopOrGo'] = 'go'
                stopTrialList.append(deepcopy(conditionOne))
            for i in range(1, stopTrialsPerStopStim + 1):
                conditionOne['stopOrGo'] = 'stop'
                stopTrialList.append(deepcopy(conditionOne))
        if conditionTwo['condition'] == 'go':
            conditionTwo['stopOrGo'] = 'go'
            for i in range(1, goTrialsPerGoStim + 1):
                stopTrialList.append(conditionTwo)
        else:
            for j in range(1, goTrialsPerStopStim + 1):
                conditionTwo['stopOrGo'] = 'go'
                stopTrialList.append(deepcopy(conditionTwo))
            for i in range(1,  stopTrialsPerStopStim + 1):
                conditionTwo['stopOrGo'] = 'stop'
                stopTrialList.append(deepcopy(conditionTwo))
        if conditionThree['condition'] == 'go':
            conditionThree['stopOrGo'] = 'go'
            for i in range(1, goTrialsPerGoStim + 1):
                stopTrialList.append(conditionThree)
        else:
            for j in range(1, goTrialsPerStopStim + 1):
                conditionThree['stopOrGo'] = 'go'
                stopTrialList.append(deepcopy(conditionThree))
            for i in range(1, stopTrialsPerStopStim + 1):
                conditionThree['stopOrGo'] = 'stop'
                stopTrialList.append(deepcopy(conditionThree))
        if conditionFour['condition'] == 'go':
            conditionFour['stopOrGo'] = 'go'
            for i in range(1, goTrialsPerGoStim + 1):
                stopTrialList.append(conditionFour)
        else:
            for j in range(1, goTrialsPerStopStim + 1):
                conditionFour['stopOrGo'] = 'go'
                stopTrialList.append(deepcopy(conditionFour))
            for i in range(1, stopTrialsPerStopStim + 1):
                conditionFour['stopOrGo'] = 'stop'
                stopTrialList.append(deepcopy(conditionFour))
        if conditionFive['condition'] == 'go':
            conditionFive['stopOrGo'] = 'go'
            for i in range(1, goTrialsPerGoStim + 1):
                stopTrialList.append(conditionFive)
        else:
            for j in range(1, goTrialsPerStopStim + 1):
                conditionFive['stopOrGo'] = 'go'
                stopTrialList.append(deepcopy(conditionFive))
            for i in range(1, stopTrialsPerStopStim + 1):
                conditionFive['stopOrGo'] = 'stop'
                stopTrialList.append(deepcopy(conditionFive))
        if conditionSix['condition'] == 'go':
            conditionSix['stopOrGo'] = 'go'
            for i in range(1, goTrialsPerGoStim + 1):
                stopTrialList.append(conditionSix)
        else:
            for j in range(1, stopTrialsPerStopStim + 1):
                conditionSix['stopOrGo'] = 'go'
                stopTrialList.append(deepcopy(conditionSix))
            for i in range(1, goTrialsPerStopStim + 1):
                conditionSix['stopOrGo'] = 'stop'
                stopTrialList.append(deepcopy(conditionSix))
        if conditionSeven['condition'] == 'go':
            conditionSeven['stopOrGo'] = 'go'
            for i in range(1, goTrialsPerGoStim + 1):
                stopTrialList.append(conditionSeven)
        else:
            for j in range(1, goTrialsPerStopStim + 1):
                conditionSeven['stopOrGo'] = 'go'
                stopTrialList.append(deepcopy(conditionSeven))
            for i in range(1, stopTrialsPerStopStim + 1):
                conditionSeven['stopOrGo'] = 'stop'
                stopTrialList.append(deepcopy(conditionSeven))
        if conditionEight['condition'] == 'go':
            conditionEight['stopOrGo'] = 'go'
            for i in range(1, goTrialsPerGoStim + 1):
                stopTrialList.append(conditionEight)
        else:
            for j in range(1, goTrialsPerStopStim + 1):
                conditionEight['stopOrGo'] = 'go'
                stopTrialList.append(deepcopy(conditionEight))
            for i in range(1, stopTrialsPerStopStim + 1):
                conditionEight['stopOrGo'] = 'stop'
                stopTrialList.append(deepcopy(conditionEight))

        shuffle(stopTrialList)
  Routine instrPractice
    TextComponent instruct1
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        A shape stimulus will appear on every trial.

        If it appears in the upper right quadrant, PRESS Y

        If it appears in the lower right quadrant, PRESS H

        If it appears in the lower left quadrant, PRESS G

        If it appears in the upper left quadrant, PRESS T

        Press any key when you are ready to proceed.
    KeyboardComponent ok1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ExitPrac
    CodeComponent code_5
      End Routine:
        if resp.corr:
            ReDoLoop.finished = True
  Routine trial
    CodeComponent code_2
    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 1
      forceEndRoutine = True
      allowedKeys = 't', 'y', 'g', 'h'
      startVal [time (s)] = .5
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    TextComponent text
      text = +
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 1
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    ImageComponent image_2
      stopVal [duration (s)] = 1.0
      pos [set every repeat] = $[xPos, yPos]
      units = pix
      startVal [time (s)] = .5
      image [set every repeat] = $CurrentStimulus
      size = [151, 151]
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  Routine Bank
  Routine Blank
    TextComponent text_2
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0
      letterHeight = 0.1
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  Routine ResetAtBlock
    CodeComponent code_3
      Begin Routine:
        Redo = 1
  Routine instrMain
    TextComponent instr2
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        A shape stimulus will appear on every trial.

        If it appears in the upper right quadrant, PRESS Y

        If it appears in the lower right quadrant, PRESS H

        If it appears in the lower left quadrant, PRESS G

        If it appears in the upper left quadrant, PRESS T

        Press any key when you are ready to proceed.
    KeyboardComponent ok2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine newStopStim
    CodeComponent code_7
      Begin Experiment:
        currentStopTrial = StopTrialList.pop(0)
        currentStopStimulus = currentStopTrial['fileName']
  Routine instrStopPrac
    TextComponent instrStopText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        A shape stimulus will appear on the left or right side of the screen

        If it appears on the left, press Z

        If it appears on the right, press M

        If you hear a tone, do not press anything on that trial
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine StimSetup
  Routine instrPractice
  LoopInitiator Blocks loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    Routine ResetAtBlock
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = Trialtypes5.xlsx
      loopType = fullRandom
      nReps = 25
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      conditions:
        [{u'xPos': 200, u'corrAns': u'y', u'yPos': 200},
        {u'xPos': -200, u'corrAns': u't', u'yPos': 200},
        {u'xPos': 200, u'corrAns': u'h', u'yPos': -200},
        {u'xPos': -200, u'corrAns': u'g', u'yPos': -200}]
      Routine NewStim
      LoopInitiator ReDoLoopMain loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = 999
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        Routine trial
        Routine feedback
        Routine Blank
        Routine ExitMain
      LoopTerminator ReDoLoopMain
    LoopTerminator trials
  LoopTerminator Blocks
  Routine instrStopPrac
  Routine newStopStim
