PsychoPy2experiment version="1.82.01"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Experiment info = {'participant':'', 'gender (m/f)':'', 'age':'', 'session':03}
  expName = LearningTask
  logging level = warning
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine blankStop
    TextComponent text_4
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine End
    TextComponent text_6
      text = This is the end, beautiful friend
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine feedback
    CodeComponent message
      Begin Experiment:
        #message variable just needs some value at start
        message=0
      Begin Routine:
        import random

        displayReward = random.randrange(1, 6)
        computedReward = round(currentReward + (random.randrange(-25, 26)*.01), 2)

        if resp.corr:#stored on last run routine
            if displayReward == 1:
                    message = "You won $0.00"# On 20% of all trials I want to give a 0 reward
            else:
                    message = "You won $ %.2f" %computedReward
        elif resp.keys is None: #or len(key_resp.keys)<1:
        #elif resp.rt == 0:
            message ="Too Slow"
        else:
          message="Wrong"

          msg="Correct! RT=%.3f" %(resp.rt)
    TextComponent feedback_2
      text [set every repeat] = $message
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = .2
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    ImageComponent image
      stopVal [duration (s)] = 1.0
      pos [set every repeat] = $[xPos, yPos]
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $currentStimulus
      size = [151, 151]
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  Routine auctionTrial
    TextComponent Fix
      text = +
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0.0
      letterHeight = 1
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    TextComponent R
      text = R
      stopVal [duration (s)] = 5
      pos = [-.75, -.7]
      units = norm
      startVal [time (s)] = 1.0
      letterHeight = .2
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    ImageComponent auctionStim
      stopVal [duration (s)] = 5.5
      units = pix
      startVal [time (s)] = .5
      image [set every repeat] = $currentAuctionStim
      size = [151, 151]
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    TextComponent T
      text = T
      stopVal [duration (s)] = 5.0
      pos = [-.45, -.7]
      units = norm
      startVal [time (s)] = 1.0
      letterHeight = 0.2
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    TextComponent Y
      text = Y
      stopVal [duration (s)] = 5.0
      pos = [-.15, -.7]
      units = norm
      startVal [time (s)] = 1.0
      letterHeight = 0.2
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    TextComponent U
      text = U
      stopVal [duration (s)] = 5.0
      pos = [.15, -.7]
      units = norm
      startVal [time (s)] = 1.0
      letterHeight = 0.2
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    TextComponent I
      text = I
      stopVal [duration (s)] = 5.0
      pos = [.45, -.7]
      units = norm
      startVal [time (s)] = 1.0
      letterHeight = 0.2
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    TextComponent O
      text = O
      stopVal [duration (s)] = 5.0
      pos = [.75, -.7]
      units = norm
      startVal [time (s)] = 1.0
      letterHeight = 0.2
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    TextComponent RAmount
      text [set every repeat] = $currentAuctionAmountOne
      stopVal [duration (s)] = 5.0
      pos = [-.75, -.4]
      units = norm
      startVal [time (s)] = 1.0
      letterHeight = 0.2
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    TextComponent TAmount
      text [set every repeat] = $currentAuctionAmountTwo
      stopVal [duration (s)] = 5.0
      pos = [-.45, -.4]
      units = norm
      startVal [time (s)] = 1.0
      letterHeight = 0.2
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    TextComponent YAmount
      text [set every repeat] = $currentAuctionAmountThree
      stopVal [duration (s)] = 5.0
      pos = [-.15, -.4]
      units = norm
      startVal [time (s)] = 1.0
      letterHeight = 0.2
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    TextComponent UAmount
      text [set every repeat] = $currentAuctionAmountFour
      stopVal [duration (s)] = 5.0
      pos = [.15, -.4]
      units = norm
      startVal [time (s)] = 1.0
      letterHeight = 0.2
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    TextComponent IAmount
      text [set every repeat] = $currentAuctionAmountFive
      stopVal [duration (s)] = 5.0
      pos = [.45, -.4]
      units = norm
      startVal [time (s)] = 1.0
      letterHeight = 0.2
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    TextComponent OAmount
      text [set every repeat] = $currentAuctionAmountSix
      stopVal [duration (s)] = 5.0
      pos = [.75, -.4]
      units = norm
      startVal [time (s)] = 1.0
      letterHeight = 0.2
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    KeyboardComponent auctionResponse
      stopVal [duration (s)] = 5
      forceEndRoutine = False
      allowedKeys = 'r', 't', 'y', 'u', 'i', 'o'
      startVal [time (s)] = 1.0
      store = first key
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  Routine ResetAtBlock
    CodeComponent code_3
      Begin Routine:
        Redo = 1
  Routine NewPracStim
    CodeComponent code_11
      Begin Routine:
        currentLearningPracTrial = learningPracTrialList.pop(0)
        currentStimulus = currentLearningPracTrial['fileName']
        currentReward = currentLearningPracTrial['reward']
  Routine GetReadyForMainLearning
  Routine pracStopCleanUp
    CodeComponent code_13
      Begin Routine:
        if currentStopPracTrial['stopOrGo'] == 'go':
            goTrialCount = goTrialCount + 1

        if goResp.corr and currentStopPracTrial['stopOrGo'] == 'go':
            goCumRT = goCumRT + goResp.rt
            goRTCount = goRTCount + 1

        if currentStopPracTrial['stopOrGo'] == 'stop':
            stopTrialCount = stopTrialCount + 1

        if currentStopPracTrial['stopOrGo'] == 'stop' and goResp.keys is None:
            stopSuccessCount = stopSuccessCount + 1

        if currentStopPracTrial['stopOrGo'] == 'go':
            if goResp.keys is None:
                omissionCount = omissionCount + 1
            elif goResp.corr == 0:
                commissionCount = commissionCount + 1

        #Outputting a bunch of variables
        pracStopTrials.addData("goTrailCountOutput", goTrialCount)
        pracStopTrials.addData("goCumRTOutput", goCumRT)
        pracStopTrials.addData("goRTCountOutput", goRTCount)
        pracStopTrials.addData("stopTrialCountOutput", stopTrialCount)
        pracStopTrials.addData("stopSuccessCountOutput", stopSuccessCount)
        pracStopTrials.addData("omissionCountOutput", omissionCount)
        pracStopTrials.addData("commissionCountOutput", commissionCount)
        pracStopTrials.addData("fixStopOnset", fixStop.tStart)
        pracStopTrials.addData("goStimOnset", goStim.tStart)
        if SSD  != -1:
            pracStopTrials.addData("stopSignalOnset", stopSignal.tStart)
  Routine SSDChange
    CodeComponent code_2
      Begin Routine:
        #Adjusting SSD within a range of 0-800ms
        if currentStopTrial['stopOrGo'] == 'stop':
            if goResp.keys is None:
                if SSD <= 800:
                    if xPosGoStim == -200:
                        SSDLeft = deepcopy(SSDLeft)  + .05
                        SSD = SSDLeft
                    if xPosGoStim == 200:
                        SSDRight = deepcopy(SSDRight) + .05
                        SSD = SSDRight
            else:
                if SSD > 0:
                    if xPosGoStim == -200:
                        SSDLeft = deepcopy(SSDLeft) - .05
                        SSD = SSDLeft
                    if xPosGoStim == 200:
                        SSDRight = deepcopy(SSDRight) - .05
                        SSD = SSDRight

        if currentStopTrial['stopOrGo'] == 'go':
            goTrialCount = goTrialCount + 1

        if goResp.corr and currentStopTrial['stopOrGo'] == 'go':
            goCumRT = goCumRT + goResp.rt
            goRTCount = goRTCount + 1

        if currentStopTrial['stopOrGo'] == 'stop':
            stopTrialCount = stopTrialCount + 1

        if currentStopTrial['stopOrGo'] == 'stop' and goResp.keys is None:
            stopSuccessCount = stopSuccessCount + 1

        if currentStopTrial['stopOrGo'] == 'go':
            if goResp.keys is None:
                omissionCount = omissionCount + 1
            elif goResp.corr == 0:
                commissionCount = commissionCount + 1

        StopTrials.addData("goTrailCountOutput", goTrialCount)
        StopTrials.addData("goCumRTOutput", goCumRT)
        StopTrials.addData("goRTCountOutput", goRTCount)
        StopTrials.addData("stopTrialCountOutput", stopTrialCount)
        StopTrials.addData("stopSuccessCountOutput", stopSuccessCount)
        StopTrials.addData("omissionCountOutput", omissionCount)
        StopTrials.addData("commissionCountOutput", commissionCount)
        StopTrials.addData("fixStopOnset", fixStop.tStart)
        StopTrials.addData("goStimOnset", goStim.tStart)
        if SSD  != -1:
            StopTrials.addData("stopSignalOnset", stopSignal.tStart)
      End Routine:
        StopTrials.addData("EndingSSD", SSD)
  Routine StimSetup
    CodeComponent code
      Begin Experiment:
        from copy import deepcopy
        colors = ['yellow', 'white', 'orange', 'magenta', 'green', 'gray', 'cyan', 'blue']
        shapes = ['triangle', 'square', 'line', 'invertedtriangle', 'hexagon', 'diamond', 'cross', 'circle']
        rewards = [0.50, 1.00, 2.00, 4.00] * 2
        conditions = ['go', 'go', 'go', 'go', 'stop', 'stop', 'stop', 'stop']
        trialDetailsList = []
        learningTrialList = []
        learningPracTrialList = []
        auctionTrialList = []
        rewardList = []
        Redo = 1
        rewardCount = 1

        shuffle(colors)
        shuffle(shapes)

        for i, color in enumerate(colors): # cycle through each color and keep track of an index number
            trialDetails = {} # a dictionary of key-value pairs
            trialDetails['fileName'] = shapes[i] + color + '.gif'
            trialDetails['reward'] = rewards[i]
            trialDetails['condition'] = conditions[i]
            trialDetailsList.append(trialDetails)

        shuffle(trialDetailsList) # do this now to ensure that order of presentation of rewards and conditions is also shuffled

        conditionOne = trialDetailsList[0]
        conditionTwo = trialDetailsList[1]
        conditionThree = trialDetailsList[2]
        conditionFour = trialDetailsList[3]
        conditionFive = trialDetailsList[4]
        conditionSix = trialDetailsList[5]
        conditionSeven = trialDetailsList[6]
        conditionEight = trialDetailsList[7]

        numLearningTrials = 400
        numLearningRepetitions = 50
        for k in range(1, numLearningRepetitions + 1):
            learningTrialList.append(conditionOne)
            learningTrialList.append(conditionTwo)
            learningTrialList.append(conditionThree)
            learningTrialList.append(conditionFour)
            learningTrialList.append(conditionFive)
            learningTrialList.append(conditionSix)
            learningTrialList.append(conditionSeven)
            learningTrialList.append(conditionEight)

        shuffle(learningTrialList)

        learningPracTrialList.append(conditionOne)
        learningPracTrialList.append(conditionTwo)
        learningPracTrialList.append(conditionThree)
        learningPracTrialList.append(conditionFour)
        learningPracTrialList.append(conditionFive)
        learningPracTrialList.append(conditionSix)
        learningPracTrialList.append(conditionSeven)
        learningPracTrialList.append(conditionEight)
        learningPracTrialList.append(conditionOne)
        learningPracTrialList.append(conditionTwo)

        shuffle(learningPracTrialList)

        stopTaskTrials = 288
        stopTrialsPerStopStim = 27
        goTrialsPerStopStim = 9
        goTrialsPerGoStim = 36
        numStim = 8
        stopTrialList = []
        stopPracTrialList = []

        if conditionOne['condition'] == 'go':
            conditionOne['stopOrGo'] = 'go'
            stopPracTrialList.append(deepcopy(conditionOne))
            stopPracTrialList.append(deepcopy(conditionOne))
            for i in range(1, goTrialsPerGoStim + 1):
                stopTrialList.append(deepcopy(conditionOne))
        else:
            for j in range(1, goTrialsPerStopStim + 1):
                conditionOne['stopOrGo'] = 'go'
                stopTrialList.append(deepcopy(conditionOne))
            stopPracTrialList.append(deepcopy(conditionOne))
            for i in range(1, stopTrialsPerStopStim + 1):
                conditionOne['stopOrGo'] = 'stop'
                stopTrialList.append(deepcopy(conditionOne))
            stopPracTrialList.append(deepcopy(conditionOne))
        if conditionTwo['condition'] == 'go':
            conditionTwo['stopOrGo'] = 'go'
            stopPracTrialList.append(deepcopy(conditionTwo))
            stopPracTrialList.append(deepcopy(conditionTwo))
            for i in range(1, goTrialsPerGoStim + 1):
                stopTrialList.append(deepcopy(conditionTwo))
        else:
            for j in range(1, goTrialsPerStopStim + 1):
                conditionTwo['stopOrGo'] = 'go'
                stopTrialList.append(deepcopy(conditionTwo))
            stopPracTrialList.append(deepcopy(conditionTwo))
            for i in range(1,  stopTrialsPerStopStim + 1):
                conditionTwo['stopOrGo'] = 'stop'
                stopTrialList.append(deepcopy(conditionTwo))
            stopPracTrialList.append(deepcopy(conditionTwo))
        if conditionThree['condition'] == 'go':
            conditionThree['stopOrGo'] = 'go'
            stopPracTrialList.append(deepcopy(conditionThree))
            for i in range(1, goTrialsPerGoStim + 1):
                stopTrialList.append(deepcopy(conditionThree))
        else:
            for j in range(1, goTrialsPerStopStim + 1):
                conditionThree['stopOrGo'] = 'go'
                stopTrialList.append(deepcopy(conditionThree))
            for i in range(1, stopTrialsPerStopStim + 1):
                conditionThree['stopOrGo'] = 'stop'
                stopTrialList.append(deepcopy(conditionThree))
            stopPracTrialList.append(deepcopy(conditionThree))
        if conditionFour['condition'] == 'go':
            conditionFour['stopOrGo'] = 'go'
            stopPracTrialList.append(deepcopy(conditionFour))
            for i in range(1, goTrialsPerGoStim + 1):
                stopTrialList.append(deepcopy(conditionFour))
        else:
            for j in range(1, goTrialsPerStopStim + 1):
                conditionFour['stopOrGo'] = 'go'
                stopTrialList.append(deepcopy(conditionFour))
            for i in range(1, stopTrialsPerStopStim + 1):
                conditionFour['stopOrGo'] = 'stop'
                stopTrialList.append(deepcopy(conditionFour))
            stopPracTrialList.append(deepcopy(conditionFour))
        if conditionFive['condition'] == 'go':
            conditionFive['stopOrGo'] = 'go'
            stopPracTrialList.append(deepcopy(conditionFive))
            for i in range(1, goTrialsPerGoStim + 1):
                stopTrialList.append(deepcopy(conditionFive))
        else:
            for j in range(1, goTrialsPerStopStim + 1):
                conditionFive['stopOrGo'] = 'go'
                stopTrialList.append(deepcopy(conditionFive))
            for i in range(1, stopTrialsPerStopStim + 1):
                conditionFive['stopOrGo'] = 'stop'
                stopTrialList.append(deepcopy(conditionFive))
            stopPracTrialList.append(deepcopy(conditionFive))
        if conditionSix['condition'] == 'go':
            conditionSix['stopOrGo'] = 'go'
            stopPracTrialList.append(deepcopy(conditionSix))
            for i in range(1, goTrialsPerGoStim + 1):
                stopTrialList.append(deepcopy(conditionSix))
        else:
            for j in range(1, stopTrialsPerStopStim + 1):
                conditionSix['stopOrGo'] = 'go'
                stopTrialList.append(deepcopy(conditionSix))
            for i in range(1, goTrialsPerStopStim + 1):
                conditionSix['stopOrGo'] = 'stop'
                stopTrialList.append(deepcopy(conditionSix))
            stopPracTrialList.append(deepcopy(conditionSix))
        if conditionSeven['condition'] == 'go':
            conditionSeven['stopOrGo'] = 'go'
            stopPracTrialList.append(deepcopy(conditionSeven))
            for i in range(1, goTrialsPerGoStim + 1):
                stopTrialList.append(deepcopy(conditionSeven))
        else:
            for j in range(1, goTrialsPerStopStim + 1):
                conditionSeven['stopOrGo'] = 'go'
                stopTrialList.append(deepcopy(conditionSeven))
            for i in range(1, stopTrialsPerStopStim + 1):
                conditionSeven['stopOrGo'] = 'stop'
                stopTrialList.append(deepcopy(conditionSeven))
            stopPracTrialList.append(deepcopy(conditionSeven))
        if conditionEight['condition'] == 'go':
            conditionEight['stopOrGo'] = 'go'
            stopPracTrialList.append(deepcopy(conditionEight))
            for i in range(1, goTrialsPerGoStim + 1):
                stopTrialList.append(deepcopy(conditionEight))
        else:
            for j in range(1, goTrialsPerStopStim + 1):
                conditionEight['stopOrGo'] = 'go'
                stopTrialList.append(deepcopy(conditionEight))
            for i in range(1, stopTrialsPerStopStim + 1):
                conditionEight['stopOrGo'] = 'stop'
                stopTrialList.append(deepcopy(conditionEight))
            stopPracTrialList.append(deepcopy(conditionEight))

        shuffle(stopTrialList)
        shuffle(stopPracTrialList)

        auctionTrials = 80
        auctionTrialsPerStim = 10
        auctionAmounts = 5
        eachAuctionAmountCount = 2
        auctionAmountsOne = [34, 68, 102, 136, 170, 204]
        auctionAmountsTwo = [39, 78, 117, 156, 195, 234]
        auctionAmountsThree = [44, 88, 132, 176, 220, 264]
        auctionAmountsFour = [49, 98, 147, 196, 245, 294]
        auctionAmountsFive = [54, 108, 162, 216, 270, 324]

        for l in range(1, auctionAmounts + 1):
            if l == 1:
                for m in range (1, eachAuctionAmountCount + 1):
                    shuffle(auctionAmountsOne)
                    conditionOne['auctionAmount'] = auctionAmountsOne
                    auctionTrialList.append(deepcopy(conditionOne))
                    shuffle(auctionAmountsOne)
                    conditionTwo['auctionAmount'] = auctionAmountsOne
                    auctionTrialList.append(deepcopy(conditionTwo))
                    shuffle(auctionAmountsOne)
                    conditionThree['auctionAmount'] = auctionAmountsOne
                    auctionTrialList.append(deepcopy(conditionThree))
                    shuffle(auctionAmountsOne)
                    conditionFour['auctionAmount'] = auctionAmountsOne
                    auctionTrialList.append(deepcopy(conditionFour))
                    shuffle(auctionAmountsOne)
                    conditionFive['auctionAmount'] = auctionAmountsOne
                    auctionTrialList.append(deepcopy(conditionFive))
                    shuffle(auctionAmountsOne)
                    conditionSix['auctionAmount'] = auctionAmountsOne
                    auctionTrialList.append(deepcopy(conditionSix))
                    shuffle(auctionAmountsOne)
                    conditionSeven['auctionAmount'] = auctionAmountsOne
                    auctionTrialList.append(deepcopy(conditionSeven))
                    shuffle(auctionAmountsOne)
                    conditionEight['auctionAmount'] = auctionAmountsOne
                    auctionTrialList.append(deepcopy(conditionEight))
            elif l == 2:
                for m in range (1, eachAuctionAmountCount + 1):
                    shuffle(auctionAmountsTwo)
                    conditionOne['auctionAmount'] = auctionAmountsTwo
                    auctionTrialList.append(deepcopy(conditionOne))
                    shuffle(auctionAmountsTwo)
                    conditionTwo['auctionAmount'] = auctionAmountsTwo
                    auctionTrialList.append(deepcopy(conditionTwo))
                    shuffle(auctionAmountsTwo)
                    conditionThree['auctionAmount'] = auctionAmountsTwo
                    auctionTrialList.append(deepcopy(conditionThree))
                    shuffle(auctionAmountsTwo)
                    conditionFour['auctionAmount'] = auctionAmountsTwo
                    auctionTrialList.append(deepcopy(conditionFour))
                    shuffle(auctionAmountsTwo)
                    conditionFive['auctionAmount'] = auctionAmountsTwo
                    auctionTrialList.append(deepcopy(conditionFive))
                    shuffle(auctionAmountsTwo)
                    conditionSix['auctionAmount'] = auctionAmountsTwo
                    auctionTrialList.append(deepcopy(conditionSix))
                    shuffle(auctionAmountsTwo)
                    conditionSeven['auctionAmount'] = auctionAmountsTwo
                    auctionTrialList.append(deepcopy(conditionSeven))
                    shuffle(auctionAmountsTwo)
                    conditionEight['auctionAmount'] = auctionAmountsTwo
                    auctionTrialList.append(deepcopy(conditionEight))
            elif l == 3:
                for m in range (1, eachAuctionAmountCount + 1):
                    shuffle(auctionAmountsThree)
                    conditionOne['auctionAmount'] = auctionAmountsThree
                    auctionTrialList.append(deepcopy(conditionOne))
                    shuffle(auctionAmountsThree)
                    conditionTwo['auctionAmount'] = auctionAmountsThree
                    auctionTrialList.append(deepcopy(conditionTwo))
                    shuffle(auctionAmountsThree)
                    conditionThree['auctionAmount'] = auctionAmountsThree
                    auctionTrialList.append(deepcopy(conditionThree))
                    shuffle(auctionAmountsThree)
                    conditionFour['auctionAmount'] = auctionAmountsThree
                    auctionTrialList.append(deepcopy(conditionFour))
                    shuffle(auctionAmountsThree)
                    conditionFive['auctionAmount'] = auctionAmountsThree
                    auctionTrialList.append(deepcopy(conditionFive))
                    shuffle(auctionAmountsThree)
                    conditionSix['auctionAmount'] = auctionAmountsThree
                    auctionTrialList.append(deepcopy(conditionSix))
                    shuffle(auctionAmountsThree)
                    conditionSeven['auctionAmount'] = auctionAmountsThree
                    auctionTrialList.append(deepcopy(conditionSeven))
                    shuffle(auctionAmountsThree)
                    conditionEight['auctionAmount'] = auctionAmountsThree
                    auctionTrialList.append(deepcopy(conditionEight))
            elif l == 4:
                for m in range (1, eachAuctionAmountCount + 1):
                    shuffle(auctionAmountsFour)
                    conditionOne['auctionAmount'] = auctionAmountsFour
                    auctionTrialList.append(deepcopy(conditionOne))
                    shuffle(auctionAmountsFour)
                    conditionTwo['auctionAmount'] = auctionAmountsFour
                    auctionTrialList.append(deepcopy(conditionTwo))
                    shuffle(auctionAmountsFour)
                    conditionThree['auctionAmount'] = auctionAmountsFour
                    auctionTrialList.append(deepcopy(conditionThree))
                    shuffle(auctionAmountsFour)
                    conditionFour['auctionAmount'] = auctionAmountsFour
                    auctionTrialList.append(deepcopy(conditionFour))
                    shuffle(auctionAmountsFour)
                    conditionFive['auctionAmount'] = auctionAmountsFour
                    auctionTrialList.append(deepcopy(conditionFive))
                    shuffle(auctionAmountsFour)
                    conditionSix['auctionAmount'] = auctionAmountsFour
                    auctionTrialList.append(deepcopy(conditionSix))
                    shuffle(auctionAmountsFour)
                    conditionSeven['auctionAmount'] = auctionAmountsFour
                    auctionTrialList.append(deepcopy(conditionSeven))
                    shuffle(auctionAmountsFour)
                    conditionEight['auctionAmount'] = auctionAmountsFour
                    auctionTrialList.append(deepcopy(conditionEight))
            elif l == 5:
                for m in range (1, eachAuctionAmountCount + 1):
                    shuffle(auctionAmountsFive)
                    conditionOne['auctionAmount'] = auctionAmountsFive
                    auctionTrialList.append(deepcopy(conditionOne))
                    shuffle(auctionAmountsFive)
                    conditionTwo['auctionAmount'] = auctionAmountsFive
                    auctionTrialList.append(deepcopy(conditionTwo))
                    shuffle(auctionAmountsFive)
                    conditionThree['auctionAmount'] = auctionAmountsFive
                    auctionTrialList.append(deepcopy(conditionThree))
                    shuffle(auctionAmountsFive)
                    conditionFour['auctionAmount'] = auctionAmountsFive
                    auctionTrialList.append(deepcopy(conditionFour))
                    shuffle(auctionAmountsFive)
                    conditionFive['auctionAmount'] = auctionAmountsFive
                    auctionTrialList.append(deepcopy(conditionFive))
                    shuffle(auctionAmountsFive)
                    conditionSix['auctionAmount'] = auctionAmountsFive
                    auctionTrialList.append(deepcopy(conditionSix))
                    shuffle(auctionAmountsFive)
                    conditionSeven['auctionAmount'] = auctionAmountsFive
                    auctionTrialList.append(deepcopy(conditionSeven))
                    shuffle(auctionAmountsFive)
                    conditionEight['auctionAmount'] = auctionAmountsFive
                    auctionTrialList.append(deepcopy(conditionEight))

        shuffle(auctionTrialList)
  Routine instrPractice
    TextComponent instruct1
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        A shape stimulus will appear on every trial.

        If it appears in the upper right quadrant, PRESS W

        If it appears in the lower right quadrant, PRESS S

        If it appears in the lower left quadrant, PRESS A

        If it appears in the upper left quadrant, PRESS Q

        Responding as fast and as accurately as possible will lead to higher rewards. The computer will randomly pick five of the trials at the end of the experiment and pay out the amount associated with those trials.

        Press any key when you are ready to proceed.
    KeyboardComponent ok1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Bank
  Routine ExitPrac_2
  Routine stopBlockSetup
    CodeComponent code_9
      Begin Routine:
        goCumRT = 0
        goRTCount = 0
        omissionCount = 0
        commissionCount = 0
        stopTrialCount = 0
        stopSuccessCount = 0
        goTrialCount = 0
  Routine newPracStopStim
    CodeComponent code_12
      Begin Routine:
        currentStopPracTrial = stopPracTrialList.pop(0)
        currentGoStim = currentStopPracTrial['fileName']
        currentStopOrGo = currentStopPracTrial['stopOrGo']

        if currentStopOrGo == 'stop':
            SSD = .25
        elif currentStopOrGo == 'go':
            SSD = -1 #This makes it so the auditory tone does not occur. There's probably a more elegant way to do this. Suggestions?

        #
        pracStopTrials.addData("beginningSSD", SSD)
        pracStopTrials.addData("trialType", currentStopOrGo)
        pracStopTrials.addData("goStim", currentGoStim)
        SSDInput = SSD + .5 # +.5 because that's the duration of the fixation cross before the go stim appears
  Routine endOfStopBlockFeedback
    CodeComponent code_10
      Begin Routine:
        if goRTCount > 0:
            goRTFeedback = goCumRT/goRTCount
            goRTFeedback = round(goRTFeedback, 2)
        else:
            goRTFeedback = 'Null'

        if goTrialCount > 0:
            commissionRate = (commissionCount/goTrialCount)*100
            commissionRate = round(commissionRate, 2)
            omissionRate = (omissionCount/goTrialCount)*100
            omissionRate = round(omissionRate, 2)
        else:
            commissionRate = 'Null'
            omissionRate = 'Null'

        if stopTrialCount > 0:
            probabilityOfStop = stopSuccessCount/stopTrialCount
            probabilityOfStop = round(probabilityOfStop, 2)
        else:
            probabilityOfStop = 'Null'

        SSDFeedback = (SSDLeft+SSDRight)/2
        SSDFeedback = round(SSDFeedback, 2)

        stopMessage = " RT = " + str(goRTFeedback) + "\n Omission % = " + str(omissionRate) + "\n Commission % = " + str(commissionRate) + "\n\n\n\n " + str(probabilityOfStop) + "\n " + str(SSDFeedback)
    TextComponent text_5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        $stopMessage
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys [set every repeat] = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine newAuctionStim
    CodeComponent code_14
      Begin Routine:
        currentAuctionTrial = auctionTrialList.pop(0)
        currentAuctionStim = currentAuctionTrial['fileName']
        currentAuctionAmount = currentAuctionTrial['auctionAmount']
        currentAuctionAmountOne = currentAuctionAmount[0]
        currentAuctionAmountTwo = currentAuctionAmount[1]
        currentAuctionAmountThree = currentAuctionAmount[2]
        currentAuctionAmountFour = currentAuctionAmount[3]
        currentAuctionAmountFive = currentAuctionAmount[4]
        currentAuctionAmountSix = currentAuctionAmount[5]
  Routine instrMain
    TextComponent instr2
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        A shape stimulus will appear on every trial.

        If it appears in the upper right quadrant, PRESS Y

        If it appears in the lower right quadrant, PRESS H

        If it appears in the lower left quadrant, PRESS G

        If it appears in the upper left quadrant, PRESS T

        Press any key when you are ready to proceed.
    KeyboardComponent ok2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine StopTrial
    SoundComponent stopSignal
      sound = 900
      volume = .2
      stopVal [duration (s)] = .2
      startEstim = .75
      startVal [time (s)] = $SSDInput
    TextComponent fixStop
      text = |
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 4
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    ImageComponent goStim
      stopVal [duration (s)] = 1.0
      pos [set every repeat] = $[xPosGoStim, yPosGoStim]
      units = pix
      startVal [time (s)] = .5
      image [set every repeat] = $currentGoStim
      size = [151, 151]
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    KeyboardComponent goResp
      correctAns = $corrGoResp
      storeCorrect = True
      stopVal [duration (s)] = 1
      forceEndRoutine = False
      allowedKeys = 'z','m'
      startVal [time (s)] = .5
      store = first key
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  Routine instrStopPrac
    TextComponent instrStopText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        A shape stimulus will appear on the left or right side of the screen

        If it appears on the left, press Z

        If it appears on the right, press M

        If you hear a tone, do not press anything on that trial

        Responding quickly to the location of the shape and withholding your response when you hear a tone are equally important.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_8
      Begin Routine:
        InitSSD = .25
        SSDLeft = InitSSD
        SSDRight = InitSSD
  Routine ExitMain
    CodeComponent code_6
      Begin Routine:
        if resp.corr:
            ReDoLoopMain.finished = True
            rewardList.append(deepcopy(computedReward))

        trials.addData("computedRewardOutput", computedReward)
        trials.addData("learningStimOnset", learningStim.tStart)
        trials.addData("learningFixOnset", learningFix.tStart)
  Routine NewStim
    CodeComponent code_4
      Begin Routine:
        currentLearningTrial = learningTrialList.pop(0)
        currentStimulus = currentLearningTrial['fileName']
        currentReward = currentLearningTrial['reward']
  Routine ExitPrac
    CodeComponent code_5
      Begin Routine:
        # I only want to sample a new trial once subjects have correctedly responded to the previous trial
        if resp.corr:
            ReDoLoopPrac.finished = True

        #Outputting some timing data
        pracTrials.addData("learningStimOnset", learningStim.tStart)
        pracTrials.addData("learningFixOnset", learningFix.tStart)
  Routine trial
    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 1
      forceEndRoutine = True
      allowedKeys = 'q', 'w', 's', 'a'
      startVal [time (s)] = .5
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    TextComponent learningFix
      text = +
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 1
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    ImageComponent learningStim
      stopVal [duration (s)] = 1.0
      pos [set every repeat] = $[xPos, yPos]
      units = pix
      startVal [time (s)] = .5
      image [set every repeat] = $currentStimulus
      size = [151, 151]
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  Routine Blank
    TextComponent text_2
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0
      letterHeight = 0.1
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  Routine rewardCalc
    CodeComponent code_15
      Begin Routine:
        shuffle(rewardList)
        chosenReward1 = rewardList.pop(0)
        chosenReward2 = rewardList.pop(1)
        chosenReward3 = rewardList.pop(2)
        chosenReward4 = rewardList.pop(3)
        chosenReward5 = rewardList.pop(4)

        totalReward = 12 + chosenReward1 + chosenReward2 + chosenReward3 + chosenReward4 + chosenReward5

        displayedReward = "In total, you earned $ %.2f" %totalReward
    TextComponent text_11
      text [set every repeat] = $displayedReward
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine auctionBreak
    TextComponent text_9
      text = Please Take a Break
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrAuction
    TextComponent text_7
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You will now read instructions on the final phase of the study

        Press any key to continue
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine newStopStim
    CodeComponent code_7
      Begin Routine:
        currentStopTrial = stopTrialList.pop(0)
        currentGoStim = currentStopTrial['fileName']
        currentStopOrGo = currentStopTrial['stopOrGo']

        #Separate SSD tracking algorithms for left and right responses
        if currentStopOrGo == 'stop':
            if xPosGoStim == -200:
                SSD = deepcopy(SSDLeft)
            else:
                SSD = deepcopy(SSDRight)
        elif currentStopOrGo == 'go':
            SSD = -1

        StopTrials.addData("beginningSSD", SSD)
        StopTrials.addData("trialType", currentStopOrGo)
        StopTrials.addData("goStim", currentGoStim)
        SSDInput = SSD + .5
Flow
  Routine StimSetup
  Routine instrPractice
  LoopInitiator pracTrials loopType="TrialHandler"
    conditionsFile = TrialtypesLearningPrac.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{u'xPos': 200, u'corrAns': u'w', u'yPos': 200},
      {u'xPos': -200, u'corrAns': u'q', u'yPos': 200},
      {u'xPos': 200, u'corrAns': u's', u'yPos': -200},
      {u'xPos': -200, u'corrAns': u'a', u'yPos': -200},
      {u'xPos': 200, u'corrAns': u'w', u'yPos': 200},
      {u'xPos': -200, u'corrAns': u'q', u'yPos': 200},
      {u'xPos': 200, u'corrAns': u's', u'yPos': -200},
      {u'xPos': -200, u'corrAns': u'a', u'yPos': -200},
      {u'xPos': 200, u'corrAns': u'w', u'yPos': 200},
      {u'xPos': -200, u'corrAns': u'q', u'yPos': 200}]
    Routine NewPracStim
    LoopInitiator ReDoLoopPrac loopType="TrialHandler"
      loopType = sequential
      nReps = 5
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      Routine trial
      Routine feedback
      Routine ExitPrac
      Routine Blank
    LoopTerminator ReDoLoopPrac
  LoopTerminator pracTrials
  Routine instrStopPrac
  LoopInitiator pracStopTrials loopType="TrialHandler"
    conditionsFile = trialtypeStop.xlsx
    loopType = fullRandom
    nReps = 5
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    conditions:
      [{u'corrGoResp': u'z', u'yPosGoStim': 0, u'xPosGoStim': -200},
      {u'corrGoResp': u'm', u'yPosGoStim': 0, u'xPosGoStim': 200}]
    Routine newPracStopStim
    Routine StopTrial
    Routine blankStop
    Routine pracStopCleanUp
  LoopTerminator pracStopTrials
  Routine endOfStopBlockFeedback
  Routine instrPractice
  LoopInitiator Blocks loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    Routine ResetAtBlock
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = TrialtypesLearning.xlsx
      loopType = fullRandom
      nReps = 25
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      conditions:
        [{u'xPos': 200, u'corrAns': u'h', u'yPos': 200},
        {u'xPos': -200, u'corrAns': u'g', u'yPos': 200},
        {u'xPos': 200, u'corrAns': u'n', u'yPos': -200},
        {u'xPos': -200, u'corrAns': u'b', u'yPos': -200}]
      Routine NewStim
      LoopInitiator ReDoLoopMain loopType="TrialHandler"
        loopType = sequential
        nReps = 5
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        Routine trial
        Routine feedback
        Routine ExitMain
        Routine Blank
      LoopTerminator ReDoLoopMain
    LoopTerminator trials
  LoopTerminator Blocks
  Routine instrStopPrac
  LoopInitiator StopBlocks loopType="TrialHandler"
    loopType = sequential
    nReps = 8
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    Routine stopBlockSetup
    LoopInitiator StopTrials loopType="TrialHandler"
      conditionsFile = trialtypeStop.xlsx
      loopType = fullRandom
      nReps = 18
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      conditions:
        [{u'corrGoResp': u'z', u'yPosGoStim': 0, u'xPosGoStim': -200},
        {u'corrGoResp': u'm', u'yPosGoStim': 0, u'xPosGoStim': 200}]
      Routine newStopStim
      Routine StopTrial
      Routine blankStop
      Routine SSDChange
    LoopTerminator StopTrials
    Routine endOfStopBlockFeedback
  LoopTerminator StopBlocks
  Routine instrAuction
  LoopInitiator auctionBlocks loopType="TrialHandler"
    loopType = random
    nReps = 4
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    LoopInitiator auctionTrials loopType="TrialHandler"
      loopType = sequential
      nReps = 20
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      Routine newAuctionStim
      Routine auctionTrial
    LoopTerminator auctionTrials
    Routine auctionBreak
  LoopTerminator auctionBlocks
  Routine rewardCalc
