PsychoPy2experiment version="1.81.03"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Experiment info = {'participant':'', 'gender (m/f)':'', 'age':'', 'session':03}
  expName = LearningTask2
  logging level = warning
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 2
      forceEndRoutine = True
      allowedKeys = 't', 'y', 'g', 'h'
      startVal [time (s)] = .5
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    PolygonComponent polygon
      opacity [set every repeat] = 1
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 1.0
      pos [set every repeat] = $[xPos, yPos]
      lineWidth [set every repeat] = 5
      units = pix
      ori [set every repeat] = 0
      startVal [time (s)] = .5
      size [set every repeat] = [200, 200]
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    TextComponent text
      text = +
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 1
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  Routine instrPractice
    TextComponent instruct1
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        In this experiment you will be presented with a large letter made up of smaller letters. Your task is to

        Respond by pressing;
         - 'S' if the SMALL letters are S
         - 'H' if the SMALL letters are H

        Try to respond as quickly and as accurately as possible.

        There will be a number of practice trials in which you will be given feedback.

        Press any key when you are ready to proceed.
    KeyboardComponent ok1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrMain
    TextComponent instr2
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        OK, ready to start the main experiment?

        Remember, press;
         - 'S' if the SMALL letters are S
         - 'H' if the SMALL letters are H

        Try to respond as quickly and as accurately as possible.

        When you are ready to proceed press any key.
    KeyboardComponent ok2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    CodeComponent message
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(resp.rt)
        else:
          msg="Oops! That was wrong"
    TextComponent feedback_2
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine thanks
    TextComponent thanksMsg
      text = You're done! Fun, wasn't it!? ;-)
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine instrPractice
  LoopInitiator practiceTrials loopType="TrialHandler"
    conditionsFile = trialTypes2.xlsx
    loopType = random
    nReps = 1
    endPoints = [1, 2]
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    conditions:
      [{u'xPos': 200, u'yPos': 200, u'Shape': u'Line', u'corrAns': u'y', u'numVertices': 2, u'location': u'up_right'},
      {u'xPos': 200, u'yPos': 200, u'Shape': u'Triangle', u'corrAns': u'y', u'numVertices': 3, u'location': u'up_right'},
      {u'xPos': 200, u'yPos': 200, u'Shape': u'Square', u'corrAns': u'y', u'numVertices': 4, u'location': u'up_right'},
      {u'xPos': 200, u'yPos': 200, u'Shape': u'Circle', u'corrAns': u'y', u'numVertices': 90, u'location': u'up_right'},
      {u'xPos': -200, u'yPos': 200, u'Shape': u'Line', u'corrAns': u't', u'numVertices': 2, u'location': u'up_left'},
      {u'xPos': -200, u'yPos': 200, u'Shape': u'Triangle', u'corrAns': u't', u'numVertices': 3, u'location': u'up_left'},
      {u'xPos': -200, u'yPos': 200, u'Shape': u'Square', u'corrAns': u't', u'numVertices': 4, u'location': u'up_left'},
      {u'xPos': -200, u'yPos': 200, u'Shape': u'Circle', u'corrAns': u't', u'numVertices': 90, u'location': u'up_left'},
      {u'xPos': 200, u'yPos': -200, u'Shape': u'Line', u'corrAns': u'h', u'numVertices': 2, u'location': u'down_right'},
      {u'xPos': 200, u'yPos': -200, u'Shape': u'Triangle', u'corrAns': u'h', u'numVertices': 3, u'location': u'down_right'},
      {u'xPos': 200, u'yPos': -200, u'Shape': u'Square', u'corrAns': u'h', u'numVertices': 4, u'location': u'down_right'},
      {u'xPos': 200, u'yPos': -200, u'Shape': u'Circle', u'corrAns': u'h', u'numVertices': 90, u'location': u'down_right'},
      {u'xPos': -200, u'yPos': -200, u'Shape': u'Line', u'corrAns': u'g', u'numVertices': 2, u'location': u'down_left'}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
    Routine trial
    Routine feedback
  LoopTerminator practiceTrials
  Routine instrMain
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes2.xlsx
    loopType = random
    nReps = 4
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    conditions:
      [{u'xPos': 200, u'yPos': 200, u'Shape': u'Line', u'corrAns': u'y', u'numVertices': 2, u'location': u'up_right'},
      {u'xPos': 200, u'yPos': 200, u'Shape': u'Triangle', u'corrAns': u'y', u'numVertices': 3, u'location': u'up_right'},
      {u'xPos': 200, u'yPos': 200, u'Shape': u'Square', u'corrAns': u'y', u'numVertices': 4, u'location': u'up_right'},
      {u'xPos': 200, u'yPos': 200, u'Shape': u'Circle', u'corrAns': u'y', u'numVertices': 90, u'location': u'up_right'},
      {u'xPos': -200, u'yPos': 200, u'Shape': u'Line', u'corrAns': u't', u'numVertices': 2, u'location': u'up_left'},
      {u'xPos': -200, u'yPos': 200, u'Shape': u'Triangle', u'corrAns': u't', u'numVertices': 3, u'location': u'up_left'},
      {u'xPos': -200, u'yPos': 200, u'Shape': u'Square', u'corrAns': u't', u'numVertices': 4, u'location': u'up_left'},
      {u'xPos': -200, u'yPos': 200, u'Shape': u'Circle', u'corrAns': u't', u'numVertices': 90, u'location': u'up_left'},
      {u'xPos': 200, u'yPos': -200, u'Shape': u'Line', u'corrAns': u'h', u'numVertices': 2, u'location': u'down_right'},
      {u'xPos': 200, u'yPos': -200, u'Shape': u'Triangle', u'corrAns': u'h', u'numVertices': 3, u'location': u'down_right'},
      {u'xPos': 200, u'yPos': -200, u'Shape': u'Square', u'corrAns': u'h', u'numVertices': 4, u'location': u'down_right'},
      {u'xPos': 200, u'yPos': -200, u'Shape': u'Circle', u'corrAns': u'h', u'numVertices': 90, u'location': u'down_right'},
      {u'xPos': -200, u'yPos': -200, u'Shape': u'Line', u'corrAns': u'g', u'numVertices': 2, u'location': u'down_left'}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
    Routine trial
  LoopTerminator trials
  Routine thanks
