PsychoPy2experiment version="1.81.03"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Experiment info = {'participant':'', 'gender (m/f)':'', 'age':'', 'session':03}
  expName = LearningTask
  logging level = warning
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine instrMain
    TextComponent instr2
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        OK, ready to start the main experiment?

        Remember, press;
         - 'S' if the SMALL letters are S
         - 'H' if the SMALL letters are H

        Try to respond as quickly and as accurately as possible.

        When you are ready to proceed press any key.
    KeyboardComponent ok2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    CodeComponent code_2
      Begin Routine:
        import random

        Integers = [1, 2, 3, 4, 5, 6, 7, 8]

        ConditionChoice = random.choice(Integers)

        if ConditionChoice == 1:
            CurrentStimulus = ConditionOne['fileName']
            CurrentReward = ConditionOne['reward']
        elif ConditionChoice == 2:
            CurrentStimulus = ConditionTwo['fileName']
            CurrentReward = ConditionTwo['reward']
        elif ConditionChoice == 3:
            CurrentStimulus = ConditionThree['fileName']
            CurrentReward = ConditionThree['reward']
        elif ConditionChoice == 4:
            CurrentStimulus = ConditionFour['fileName']
            CurrentReward = ConditionFour['reward']
        elif ConditionChoice == 5:
            CurrentStimulus = ConditionFive['fileName']
            CurrentReward = ConditionFive['reward']
        elif ConditionChoice == 6:
            CurrentStimulus = ConditionSix['fileName']
            CurrentReward = ConditionSix['reward']
        elif ConditionChoice == 7:
            CurrentStimulus = ConditionSeven['fileName']
            CurrentReward = ConditionSeven['reward']
        elif ConditionChoice == 8:
            CurrentStimulus = ConditionEight['fileName']
            CurrentReward = ConditionEight['reward']
    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 2
      forceEndRoutine = True
      allowedKeys = 't', 'y', 'g', 'h'
      startVal [time (s)] = .5
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    TextComponent text
      text = +
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 1
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    ImageComponent image_2
      stopVal [duration (s)] = 1.0
      pos [set every repeat] = $[xPos, yPos]
      units = pix
      startVal [time (s)] = .5
      image [set every repeat] = $CurrentStimulus
      size = [101, 101]
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  Routine StimSetup
    CodeComponent code
      Begin Experiment:
        import random

        colors = ['yellow', 'white', 'orange', 'magenta', 'green', 'gray', 'cyan', 'blue']
        shapes = ['triangle', 'square', 'line', 'invertedtriangle', 'hexagon', 'diamond', 'cross', 'circle']
        rewards = [0.5, 1, 2, 4] * 2
        conditions = ['go', 'go', 'go', 'go', 'stop', 'stop', 'stop', 'stop']
        trialDetailsList = []

        shuffle(colors)
        shuffle(shapes)

        for i, color in enumerate(colors): # cycle through each color and keep track of an index number
            trialDetails = {} # a dictionary of key-value pairs
            trialDetails['fileName'] = shapes[i] + color + '.gif'
            trialDetails['reward'] = rewards[i]
            trialDetails['condition'] = conditions[i]
            trialDetailsList.append(trialDetails)

        shuffle(trialDetailsList) # do this now to ensure that order of presentation of rewards and conditions is also shuffled

        ConditionOne = trialDetailsList[0]
        ConditionTwo = trialDetailsList[1]
        ConditionThree = trialDetailsList[2]
        ConditionFour = trialDetailsList[3]
        ConditionFive = trialDetailsList[4]
        ConditionSix = trialDetailsList[5]
        ConditionSeven = trialDetailsList[6]
        ConditionEight = trialDetailsList[7]
  Routine instrPractice
    TextComponent instruct1
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        A shape stimulus will appear on every trial.

        If it appears in the upper right quadrant, PRESS Y

        If it appears in the lower right quadrant, PRESS H

        If it appears in the lower left quadrant, PRESS G

        If it appears in the upper left quadrant, PRESS T

        Press any key when you are ready to proceed.
    KeyboardComponent ok1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
    CodeComponent message
      Begin Experiment:
        #message variable just needs some value at start
        message=0
      Begin Routine:
        #if resp.corr:#stored on last run routine
        #  msg="Correct! RT=%.3f" %(resp.rt)
        #else:
        #  msg="Oops! That was wrong"

        if ConditionChoice == 1:
            CurrentReward = ConditionOne['reward']
        elif ConditionChoice == 2:
            CurrentReward = ConditionTwo['reward']
        elif ConditionChoice == 3:
            CurrentReward = ConditionThree['reward']
        elif ConditionChoice == 4:
            CurrentReward = ConditionFour['reward']
        elif ConditionChoice == 5:
            CurrentReward = ConditionFive['reward']
        elif ConditionChoice == 6:
            CurrentReward = ConditionSix['reward']
        elif ConditionChoice == 7:
            CurrentReward = ConditionSeven['reward']
        elif ConditionChoice == 8:
            CurrentReward = ConditionEight['reward']

        message = CurrentReward
    TextComponent feedback_2
      text [set every repeat] = $message
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine StimSetup
  Routine instrPractice
  LoopInitiator practiceTrials loopType="TrialHandler"
    conditionsFile = Trialtypes5.xlsx
    loopType = random
    nReps = 1
    endPoints = [1, 2]
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    conditions:
      [{u'xPos': 200, u'corrAns': u'y', u'yPos': 200},
      {u'xPos': -200, u'corrAns': u't', u'yPos': 200},
      {u'xPos': 200, u'corrAns': u'h', u'yPos': -200},
      {u'xPos': -200, u'corrAns': u'g', u'yPos': -200}]
    Routine trial
    Routine feedback
  LoopTerminator practiceTrials
  Routine instrMain
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Trialtypes5.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{u'xPos': 200, u'corrAns': u'y', u'yPos': 200},
      {u'xPos': -200, u'corrAns': u't', u'yPos': 200},
      {u'xPos': 200, u'corrAns': u'h', u'yPos': -200},
      {u'xPos': -200, u'corrAns': u'g', u'yPos': -200}]
    Routine trial
    Routine feedback
  LoopTerminator trials
