PsychoPy2experiment version="1.81.03"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Experiment info = {'participant':'', 'gender (m/f)':'', 'age':'', 'session':03}
  expName = LearningTask
  logging level = warning
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine feedback
    CodeComponent message
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(resp.rt)
        else:
          msg="Oops! That was wrong"
    TextComponent feedback_2
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine StimSetup
    CodeComponent code
  Routine instrPractice
    TextComponent instruct1
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        A shape stimulus will appear on every trial.

        If it appears in the upper right quadrant, PRESS Y

        If it appears in the lower right quadrant, PRESS H

        If it appears in the lower left quadrant, PRESS G

        If it appears in the upper left quadrant, PRESS T

        Press any key when you are ready to proceed.
    KeyboardComponent ok1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 2
      forceEndRoutine = True
      allowedKeys = 't', 'y', 'g', 'h'
      startVal [time (s)] = .5
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    TextComponent text
      text = +
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 1
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    ImageComponent image_2
      stopVal [duration (s)] = 1.0
      pos [set every repeat] = $[xPos, yPos]
      units = pix
      startVal [time (s)] = .5
      image [set every repeat] = $ShapeStimulus
      size = [101, 101]
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  Routine instrMain
    TextComponent instr2
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        OK, ready to start the main experiment?

        Remember, press;
         - 'S' if the SMALL letters are S
         - 'H' if the SMALL letters are H

        Try to respond as quickly and as accurately as possible.

        When you are ready to proceed press any key.
    KeyboardComponent ok2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator ColorLoop loopType="TrialHandler"
    conditionsFile = Color.xlsx
    loopType = random
    nReps = 8
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    conditions:
      [{u'Color': u'yellow'},
      {u'Color': u'white'},
      {u'Color': u'orange'},
      {u'Color': u'magenta'},
      {u'Color': u'green'},
      {u'Color': u'gray'},
      {u'Color': u'cyan'},
      {u'Color': u'blue'}]
    Routine StimSetup
  LoopTerminator ColorLoop
  Routine instrPractice
  LoopInitiator practiceTrials loopType="TrialHandler"
    conditionsFile = trialTypes3.xlsx
    loopType = random
    nReps = 1
    endPoints = [1, 2]
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    conditions:
      [{u'xPos': 200, u'ShapeStimulus': u'crosscyan.gif', u'yPos': 200, u'Shape': u'Line', u'location': u'up_right', u'corrAns': u'y'},
      {u'xPos': 200, u'ShapeStimulus': u'crossgray.gif', u'yPos': 200, u'Shape': u'Triangle', u'location': u'up_right', u'corrAns': u'y'},
      {u'xPos': 200, u'ShapeStimulus': u'crossorange.gif', u'yPos': 200, u'Shape': u'Square', u'location': u'up_right', u'corrAns': u'y'},
      {u'xPos': 200, u'ShapeStimulus': u'crossyellow.gif', u'yPos': 200, u'Shape': u'Circle', u'location': u'up_right', u'corrAns': u'y'},
      {u'xPos': -200, u'ShapeStimulus': u'circlegreen.gif', u'yPos': 200, u'Shape': u'Line', u'location': u'up_left', u'corrAns': u't'},
      {u'xPos': -200, u'ShapeStimulus': u'circlemaagenta.gif', u'yPos': 200, u'Shape': u'Triangle', u'location': u'up_left', u'corrAns': u't'},
      {u'xPos': -200, u'ShapeStimulus': u'circlewhite.gif', u'yPos': 200, u'Shape': u'Square', u'location': u'up_left', u'corrAns': u't'},
      {u'xPos': -200, u'ShapeStimulus': u'circlecyan.gif', u'yPos': 200, u'Shape': u'Circle', u'location': u'up_left', u'corrAns': u't'},
      {u'xPos': 200, u'ShapeStimulus': u'diamondgray.gif', u'yPos': -200, u'Shape': u'Line', u'location': u'down_right', u'corrAns': u'h'},
      {u'xPos': 200, u'ShapeStimulus': u'diamondorange.gif', u'yPos': -200, u'Shape': u'Triangle', u'location': u'down_right', u'corrAns': u'h'},
      {u'xPos': 200, u'ShapeStimulus': u'diamondwhite.gif', u'yPos': -200, u'Shape': u'Square', u'location': u'down_right', u'corrAns': u'h'}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
    Routine trial
    Routine feedback
  LoopTerminator practiceTrials
  Routine instrMain
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes2.xlsx
    loopType = random
    nReps = 4
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    conditions:
      [{u'xPos': 200, u'yPos': 200, u'Shape': u'Line', u'corrAns': u'y', u'numVertices': 2, u'location': u'up_right'},
      {u'xPos': 200, u'yPos': 200, u'Shape': u'Triangle', u'corrAns': u'y', u'numVertices': 3, u'location': u'up_right'},
      {u'xPos': 200, u'yPos': 200, u'Shape': u'Square', u'corrAns': u'y', u'numVertices': 4, u'location': u'up_right'},
      {u'xPos': 200, u'yPos': 200, u'Shape': u'Circle', u'corrAns': u'y', u'numVertices': 90, u'location': u'up_right'},
      {u'xPos': -200, u'yPos': 200, u'Shape': u'Line', u'corrAns': u't', u'numVertices': 2, u'location': u'up_left'},
      {u'xPos': -200, u'yPos': 200, u'Shape': u'Triangle', u'corrAns': u't', u'numVertices': 3, u'location': u'up_left'},
      {u'xPos': -200, u'yPos': 200, u'Shape': u'Square', u'corrAns': u't', u'numVertices': 4, u'location': u'up_left'},
      {u'xPos': -200, u'yPos': 200, u'Shape': u'Circle', u'corrAns': u't', u'numVertices': 90, u'location': u'up_left'},
      {u'xPos': 200, u'yPos': -200, u'Shape': u'Line', u'corrAns': u'h', u'numVertices': 2, u'location': u'down_right'},
      {u'xPos': 200, u'yPos': -200, u'Shape': u'Triangle', u'corrAns': u'h', u'numVertices': 3, u'location': u'down_right'},
      {u'xPos': 200, u'yPos': -200, u'Shape': u'Square', u'corrAns': u'h', u'numVertices': 4, u'location': u'down_right'},
      {u'xPos': 200, u'yPos': -200, u'Shape': u'Circle', u'corrAns': u'h', u'numVertices': 90, u'location': u'down_right'},
      {u'xPos': -200, u'yPos': -200, u'Shape': u'Line', u'corrAns': u'g', u'numVertices': 2, u'location': u'down_left'}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
    Routine trial
  LoopTerminator trials
