PsychoPy2experiment version="1.82.01"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Experiment info = {'participant':'', 'gender (m/f)':'', 'age':'', 'session':03}
  expName = LearningTask
  logging level = warning
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine feedback
    CodeComponent message
      Begin Experiment:
        #message variable just needs some value at start
        message=0
      Begin Routine:
        DisplayReward = random.randrange(1, 6)

        if resp.corr:#stored on last run routine
            if DisplayReward == 1:
                    message = "You won $" + str(0);
            else:
                    CurrentReward = currentLearningTrial['reward']
                    message = "You won $" + str(CurrentReward + (random.randrange(-25, 26)*.01))
        elif resp.keys is None: #or len(key_resp.keys)<1:
        #elif resp.rt == 0:
            message ="Too Slow"
        else:
          message="Wrong"

        #if resp.corr:#stored on last run routine
        #    Redo = 1;
        #else:
        #    Redo = Redo + 1;

        #if DisplayReward == 1:
        #    message = 0;
        #else:
        #    message = CurrentReward + (random.randrange(-25, 26)*.01)

        #  message="Correct! RT=%.3f" %(resp.rt)
    TextComponent feedback_2
      text [set every repeat] = $message
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = .2
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    ImageComponent image
      stopVal [duration (s)] = 1.0
      pos [set every repeat] = $[xPos, yPos]
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $CurrentStimulus
      size = [151, 151]
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  Routine ExitMain
    CodeComponent code_6
      End Routine:
        if resp.corr:
            ReDoLoopMain.finished = True
  Routine NewStim
    CodeComponent code_4
      Begin Routine:
        currentLearningTrial = learningTrialList.pop(0)
        CurrentStimulus = currentLearningTrial['fileName']
  Routine StimSetup
    CodeComponent code
      Begin Experiment:
        from copy import deepcopy
        colors = ['yellow', 'white', 'orange', 'magenta', 'green', 'gray', 'cyan', 'blue']
        shapes = ['triangle', 'square', 'line', 'invertedtriangle', 'hexagon', 'diamond', 'cross', 'circle']
        rewards = [0.5, 1, 2, 4] * 2
        conditions = ['go', 'go', 'go', 'go', 'stop', 'stop', 'stop', 'stop']
        trialDetailsList = []
        learningTrialList = []

        shuffle(colors)
        shuffle(shapes)

        for i, color in enumerate(colors): # cycle through each color and keep track of an index number
            trialDetails = {} # a dictionary of key-value pairs
            trialDetails['fileName'] = shapes[i] + color + '.gif'
            trialDetails['reward'] = rewards[i]
            trialDetails['condition'] = conditions[i]
            trialDetailsList.append(trialDetails)

        shuffle(trialDetailsList) # do this now to ensure that order of presentation of rewards and conditions is also shuffled

        ConditionOne = trialDetailsList[0]
        ConditionTwo = trialDetailsList[1]
        ConditionThree = trialDetailsList[2]
        ConditionFour = trialDetailsList[3]
        ConditionFive = trialDetailsList[4]
        ConditionSix = trialDetailsList[5]
        ConditionSeven = trialDetailsList[6]
        ConditionEight = trialDetailsList[7]

        NumLearningTrials = 400
        NumLearningRepetitions = 50
        for k in range(1, NumLearningRepetitions + 1):
            learningTrialList.append(ConditionOne)
            learningTrialList.append(ConditionTwo)
            learningTrialList.append(ConditionThree)
            learningTrialList.append(ConditionFour)
            learningTrialList.append(ConditionFive)
            learningTrialList.append(ConditionSix)
            learningTrialList.append(ConditionSeven)
            learningTrialList.append(ConditionEight)

        shuffle(learningTrialList)

        StopTaskTrials = 272
        StopTrialsPerStopStim = 26
        GoTrialsPerStopStim = 8
        GoTrialsPerGoStim = 34
        NumStim = 8
        StopTrialList = []

        #for i in range (1, StopTaskTrials + 1):
        #    if ConditionOne['condition'] == 'go':
        #        for j in range (1, GoTrialsPerGoStim + 1):
        #            ConditionOne['StopOrGo'] = 'NoStop'
        #            StopTrialList.append(ConditionOne)
        #    elif ConditionOne['condition'] == 'stop':
        #        for j in range (1, GoTrialsPerStopStim + 1):
        #            ConditionOne['StopOrGo'] = 'NoStop'
        #            StopTrialList.append(ConditionOne)
        if ConditionOne['condition'] == 'go':
            ConditionOne['StopOrGo'] = 'go'
            for i in range(1, GoTrialsPerGoStim + 1):
                StopTrialList.append(ConditionOne)
        else:
            for j in range(1, GoTrialsPerStopStim + 1):
                ConditionOne['StopOrGo'] = 'go'
                StopTrialList.append(deepcopy(ConditionOne))
            for i in range(1, StopTrialsPerStopStim + 1):
                ConditionOne['StopOrGo'] = 'stop'
                StopTrialList.append(deepcopy(ConditionOne))

        if ConditionTwo['condition'] == 'go':
            ConditionTwo['StopOrGo'] = 'go'
            for i in range(1, GoTrialsPerGoStim + 1):
                StopTrialList.append(ConditionTwo)
        else:
            for j in range(1, GoTrialsPerStopStim + 1):
                ConditionTwo['StopOrGo'] = 'go'
                StopTrialList.append(deepcopy(ConditionTwo))
            for i in range(1,  StopTrialsPerStopStim + 1):
                ConditionTwo['StopOrGo'] = 'stop'
                StopTrialList.append(deepcopy(ConditionTwo))

        if ConditionThree['condition'] == 'go':
            ConditionThree['StopOrGo'] = 'go'
            for i in range(1, GoTrialsPerGoStim + 1):
                StopTrialList.append(ConditionThree)
        else:
            for j in range(1, GoTrialsPerStopStim + 1):
                ConditionThree['StopOrGo'] = 'go'
                StopTrialList.append(deepcopy(ConditionThree))
            for i in range(1, StopTrialsPerStopStim + 1):
                ConditionThree['StopOrGo'] = 'stop'
                StopTrialList.append(deepcopy(ConditionThree))

        if ConditionFour['condition'] == 'go':
            ConditionFour['StopOrGo'] = 'go'
            for i in range(1, GoTrialsPerGoStim + 1):
                StopTrialList.append(ConditionFour)
        else:
            for j in range(1, GoTrialsPerStopStim + 1):
                ConditionFour['StopOrGo'] = 'go'
                StopTrialList.append(deepcopy(ConditionFour))
            for i in range(1, StopTrialsPerStopStim + 1):
                ConditionFour['StopOrGo'] = 'stop'
                StopTrialList.append(deepcopy(ConditionFour))

        if ConditionFive['condition'] == 'go':
            ConditionFive['StopOrGo'] = 'go'
            for i in range(1, GoTrialsPerGoStim + 1):
                StopTrialList.append(ConditionFive)
        else:
            for j in range(1, GoTrialsPerStopStim + 1):
                ConditionFive['StopOrGo'] = 'go'
                StopTrialList.append(deepcopy(ConditionFive))
            for i in range(1, StopTrialsPerStopStim + 1):
                ConditionFive['StopOrGo'] = 'stop'
                StopTrialList.append(deepcopy(ConditionFive))

        if ConditionSix['condition'] == 'go':
            ConditionSix['StopOrGo'] = 'go'
            for i in range(1, GoTrialsPerGoStim + 1):
                StopTrialList.append(ConditionSix)
        else:
            for j in range(1, StopTrialsPerStopStim + 1):
                ConditionSix['StopOrGo'] = 'go'
                StopTrialList.append(deepcopy(ConditionSix))
            for i in range(1, GoTrialsPerStopStim + 1):
                ConditionSix['StopOrGo'] = 'stop'
                StopTrialList.append(deepcopy(ConditionSix))

        if ConditionSeven['condition'] == 'go':
            ConditionSeven['StopOrGo'] = 'go'
            for i in range(1, GoTrialsPerGoStim + 1):
                StopTrialList.append(ConditionSeven)
        else:
            for j in range(1, GoTrialsPerStopStim + 1):
                ConditionSeven['StopOrGo'] = 'go'
                StopTrialList.append(deepcopy(ConditionSeven))
            for i in range(1, StopTrialsPerStopStim + 1):
                ConditionSeven['StopOrGo'] = 'stop'
                StopTrialList.append(deepcopy(ConditionSeven))

        if ConditionEight['condition'] == 'go':
            ConditionEight['StopOrGo'] = 'go'
            for i in range(1, GoTrialsPerGoStim + 1):
                StopTrialList.append(ConditionEight)
        else:
            for j in range(1, GoTrialsPerStopStim + 1):
                ConditionEight['StopOrGo'] = 'go'
                StopTrialList.append(deepcopy(ConditionEight))
            for i in range(1, StopTrialsPerStopStim + 1):
                ConditionEight['StopOrGo'] = 'stop'
                StopTrialList.append(deepcopy(ConditionEight))


        shuffle(StopTrialList)
  Routine instrPractice
    TextComponent instruct1
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        A shape stimulus will appear on every trial.

        If it appears in the upper right quadrant, PRESS Y

        If it appears in the lower right quadrant, PRESS H

        If it appears in the lower left quadrant, PRESS G

        If it appears in the upper left quadrant, PRESS T

        Press any key when you are ready to proceed.
    KeyboardComponent ok1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ExitPrac
    CodeComponent code_5
      End Routine:
        if resp.corr:
            ReDoLoop.finished = True
  Routine trial
    CodeComponent code_2
    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 1
      forceEndRoutine = True
      allowedKeys = 't', 'y', 'g', 'h'
      startVal [time (s)] = .5
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    TextComponent text
      text = +
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 1
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    ImageComponent image_2
      stopVal [duration (s)] = 1.0
      pos [set every repeat] = $[xPos, yPos]
      units = pix
      startVal [time (s)] = .5
      image [set every repeat] = $CurrentStimulus
      size = [151, 151]
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  Routine newStopStim
    CodeComponent code_7
      Begin Routine:
        StopTaskTrials = 272
        StopTrialsPerStopStim = 26
        GoTrialsPerStopStim = 8
        GoTrialsPerGoStim = 34


        for i in range(1, StopTaskTrials + 1):

        #Redo = 1
  Routine Blank
    TextComponent text_2
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0
      letterHeight = 0.1
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  Routine ResetAtBlock
    CodeComponent code_3
      Begin Routine:
        Redo = 1
  Routine instrMain
    TextComponent instr2
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        A shape stimulus will appear on every trial.

        If it appears in the upper right quadrant, PRESS Y

        If it appears in the lower right quadrant, PRESS H

        If it appears in the lower left quadrant, PRESS G

        If it appears in the upper left quadrant, PRESS T

        Press any key when you are ready to proceed.
    KeyboardComponent ok2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Bank
  Routine instrStopPrac
    TextComponent instrStopText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        A shape stimulus will appear on the left or right side of the screen

        If it appears on the left, press Z

        If it appears on the right, press M

        If you hear a tone, do not press anything on that trial
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine StimSetup
  Routine instrPractice
  LoopInitiator Blocks loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    Routine ResetAtBlock
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = Trialtypes5.xlsx
      loopType = fullRandom
      nReps = 25
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      conditions:
        [{u'xPos': 200, u'corrAns': u'y', u'yPos': 200},
        {u'xPos': -200, u'corrAns': u't', u'yPos': 200},
        {u'xPos': 200, u'corrAns': u'h', u'yPos': -200},
        {u'xPos': -200, u'corrAns': u'g', u'yPos': -200}]
      Routine NewStim
      LoopInitiator ReDoLoopMain loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = 999
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        Routine trial
        Routine feedback
        Routine Blank
        Routine ExitMain
      LoopTerminator ReDoLoopMain
    LoopTerminator trials
  LoopTerminator Blocks
  Routine instrStopPrac
