PsychoPy2experiment version="1.81.02"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  Save csv file = True
  expName = stroopTest
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent target
      color [set every repeat] = $color
      text [set every repeat] = $word
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right','down'
      startVal [time (s)] = 0.5
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  Routine instructions
    TextComponent instrText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Remember, choose the color of the letters, ignoring the word:

        left = red
        down = green
        right = blue
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = StroopInput.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{u'color': u'red', u'congruent': 1, u'word': u'red', u'corrAns': u'left'},
      {u'color': u'green', u'congruent': 0, u'word': u'red', u'corrAns': u'down'},
      {u'color': u'green', u'congruent': 1, u'word': u'green', u'corrAns': u'down'},
      {u'color': u'blue', u'congruent': 0, u'word': u'green', u'corrAns': u'right'},
      {u'color': u'blue', u'congruent': 1, u'word': u'blue', u'corrAns': u'right'},
      {u'color': u'red', u'congruent': 0, u'word': u'blue', u'corrAns': u'left'}]
    Routine trial
  LoopTerminator trials
